<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0-rc1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ubx="clr-namespace:Bonsai.uBlox;assembly=Bonsai.uBlox"
                 xmlns:p3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:lsl="clr-namespace:Bonsai.Lsl;assembly=Bonsai.Lsl"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:tkf="clr-namespace:Bonsai.Tinkerforge;assembly=Bonsai.Tinkerforge"
                 xmlns:p4="clr-namespace:Bonsai.WebSockets;assembly=Bonsai.WebSockets"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\OutedoorData\20221219\CMBD</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value +  it.TimeStamp.ToString("yyyy_MM_dd_HH_mm_ss")</scr:Expression>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>LoggingPath</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="harp:HarpMessage">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogMuxAddress</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address xsi:nil="true" />
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address xsi:nil="true" />
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Address</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LogName" />
                  </Expression>
                  <Expression xsi:type="SelectMany">
                    <Name>LogHarpStreams</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="AsyncSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LogName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Streams</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoggingPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{2}\{0}_{1}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="AsyncSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\Streams_39</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="17" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogReadDump</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:Address xsi:nil="true" />
                      <harp:MessageType>Read</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>StreamReadDump.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\StreamReadDump.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="p1:Mat">
              <Name>MicrophoneData</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogMicrophone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Microphone.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\Microphone.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="sys:Tuple(p2:AccelerometerData,sys:Double,sys:Double)">
              <Name>AccelarometerData</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogAccelarometer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Accelarometer.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\Accelarometer.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="sys:Tuple(ubx:UbxPacket,sys:Double)">
              <Name>UbxEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogUbxHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>ubx_harp_ts.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\ubx_harp_ts.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                    <io:Selector>Item2,Item1.MessageClass,Item1.MessageId</io:Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogUbx</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>ubx.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\ubx.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="sys:Tuple(sys:String,sys:Double)">
              <Name>EmpaticaEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogEmpaticaHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>empatica_harp_ts.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\OutedoorData\20221219\CMBD2022_12_20_09_12_35\empatica_harp_ts.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BioData</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="BehaviorSubject" TypeArguments="harp:HarpMessage">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM9</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>7</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>EnableStream</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>SynchOff</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT3S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>15</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>EnableStream</Name>
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TimestampSource</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>35</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>TimestampSource</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SynchPulse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Defer">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:CreateDiscreteUniform">
                      <p3:Lower>5</p3:Lower>
                      <p3:Upper>15</p3:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT11S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="PublishSubject" TypeArguments="sys:Object">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>39</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>3</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT5.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>40</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>3</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BioDataCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="lsl:StreamOutlet">
              <lsl:Name>EmotionalCitiesStream1</lsl:Name>
              <lsl:ContentType>Markers</lsl:ContentType>
              <lsl:ChannelCount>1</lsl:ChannelCount>
              <lsl:Selector>it</lsl:Selector>
              <lsl:SampleRate>0</lsl:SampleRate>
              <lsl:UniqId>EmotionalCitiesOutlet</lsl:UniqId>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Microphone</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioCapture">
                <al:DeviceName>Line (Sound Blaster G3)</al:DeviceName>
                <al:SampleRate>44100</al:SampleRate>
                <al:SampleFormat>Stereo16</al:SampleFormat>
                <al:BufferLength>0.1</al:BufferLength>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>MicrophoneData</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>222</harp:Address>
              <harp:PayloadType>TimestampedS32</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TinkerForge</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="tkf:CreateBrickConnection">
                <tkf:HostName>localhost</tkf:HostName>
                <tkf:Port>4223</tkf:Port>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>GPS</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AirQuality</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="tkf:AirQuality">
                      <tkf:Uid>Xco</tkf:Uid>
                      <tkf:Period>1000</tkf:Period>
                      <tkf:TemperatureOffset>0</tkf:TemperatureOffset>
                      <tkf:BackgroundCalibrationDuration>Days4</tkf:BackgroundCalibrationDuration>
                      <tkf:StatusLed>ShowStatus</tkf:StatusLed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>IaqIndex</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>233</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Temperature</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>234</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Humidity</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>235</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AirPressure</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>236</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="1" To="11" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="14" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="14" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="14" Label="Source3" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source4" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SoundPressure</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="tkf:SoundPressureLevel">
                      <tkf:Uid>XzC</tkf:Uid>
                      <tkf:Period>10</tkf:Period>
                      <tkf:FftSize>FftSize512</tkf:FftSize>
                      <tkf:Weighting>WeightingITU</tkf:Weighting>
                      <tkf:StatusLed>ShowStatus</tkf:StatusLed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>237</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Humidity</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="tkf:HumidityV2">
                      <tkf:Uid>WhE</tkf:Uid>
                      <tkf:Period>10</tkf:Period>
                      <tkf:Heater>Disabled</tkf:Heater>
                      <tkf:MovingAverageLengthTemperature>5</tkf:MovingAverageLengthTemperature>
                      <tkf:MovingAverageLengthHumidity>5</tkf:MovingAverageLengthHumidity>
                      <tkf:StatusLed>ShowStatus</tkf:StatusLed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>238</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>AnalogInput</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="tkf:AnalogInV3">
                      <tkf:Uid>Zmo</tkf:Uid>
                      <tkf:Period>10</tkf:Period>
                      <tkf:StatusLed>ShowStatus</tkf:StatusLed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>239</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Particulate Matter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="tkf:ParticulateMatter">
                      <tkf:Uid>LdX</tkf:Uid>
                      <tkf:Period>10</tkf:Period>
                      <tkf:StatusLed>ShowStatus</tkf:StatusLed>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Pm10</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>240</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Pm25</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>241</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Pm100</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Event</harp:MessageType>
                    <harp:Address>242</harp:Address>
                    <harp:PayloadType>TimestampedS32</harp:PayloadType>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="11" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source3" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="tkf:IndustrialDual020mAV2">
                <tkf:Uid>Prc</tkf:Uid>
                <tkf:Period>10</tkf:Period>
                <tkf:Channel>0</tkf:Channel>
                <tkf:StatusLed>ShowStatus</tkf:StatusLed>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>243</harp:Address>
              <harp:PayloadType>TimestampedS32</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="tkf:ThermocoupleV2">
                <tkf:Uid>WpT</tkf:Uid>
                <tkf:Period>10</tkf:Period>
                <tkf:Averaging>Averaging1</tkf:Averaging>
                <tkf:Type>TypeK</tkf:Type>
                <tkf:Filter>Filter50Hz</tkf:Filter>
                <tkf:StatusLed>ShowStatus</tkf:StatusLed>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>244</harp:Address>
              <harp:PayloadType>TimestampedS32</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="tkf:PTCV2">
                <tkf:Uid>KW8</tkf:Uid>
                <tkf:Period>10</tkf:Period>
                <tkf:MovingAverageLengthTemperature>1</tkf:MovingAverageLengthTemperature>
                <tkf:MovingAverageLengthResistance>1</tkf:MovingAverageLengthResistance>
                <tkf:WireMode>WireMode2</tkf:WireMode>
                <tkf:StatusLed>ShowStatus</tkf:StatusLed>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>245</harp:Address>
              <harp:PayloadType>TimestampedS32</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="13" Label="Source1" />
            <Edge From="2" To="16" Label="Source1" />
            <Edge From="3" To="16" Label="Source2" />
            <Edge From="4" To="16" Label="Source3" />
            <Edge From="5" To="16" Label="Source4" />
            <Edge From="6" To="16" Label="Source5" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source6" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source7" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source8" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Pupil</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AdaFruitAcc</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:CreateSerialPort">
                <io:Name>Accel</io:Name>
                <io:PortName>COM10</io:PortName>
                <io:BaudRate>115200</io:BaudRate>
                <io:Parity>None</io:Parity>
                <io:ParityReplace>63</io:ParityReplace>
                <io:DataBits>8</io:DataBits>
                <io:StopBits>One</io:StopBits>
                <io:Handshake>None</io:Handshake>
                <io:DiscardNull>false</io:DiscardNull>
                <io:DtrEnable>true</io:DtrEnable>
                <io:RtsEnable>false</io:RtsEnable>
                <io:ReadBufferSize>4096</io:ReadBufferSize>
                <io:WriteBufferSize>2048</io:WriteBufferSize>
                <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringRead">
                <io:PortName>Accel</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ParseAccelerometerString" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampSource</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>37</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1,Item2,Item1.Item2</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
it.Item1 as AccData,
it.Item2 as TriggerTimestamp,
it.Item3 as TimestampSource)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AccData,TriggerTimestamp,TimestampSource</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>AccelarometerData</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UBX</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ubx:Device">
                <ubx:PortName>COM6</ubx:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampSource</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>UbxEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Empatica</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Port" />
              <Property Name="Host" />
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:String">
              <Name>EmpaticaCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:EmpaticaClient">
                <p4:Host>127.0.0.1</p4:Host>
                <p4:Port>28000</p4:Port>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampSource</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>device_list</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>38735A</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>device_connect {0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>bvp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>acc</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>gsr</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ibi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>tmp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>bat</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>tag</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>7</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>device_subscribe {0} ON</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="19" Label="Source2" />
            <Edge From="13" To="19" Label="Source1" />
            <Edge From="14" To="19" Label="Source3" />
            <Edge From="15" To="19" Label="Source4" />
            <Edge From="16" To="19" Label="Source5" />
            <Edge From="17" To="19" Label="Source6" />
            <Edge From="18" To="19" Label="Source7" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ECG_Viz</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>35</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>0</rx:Start>
                <rx:Step>4</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FrequencyFilter">
                <dsp:SampleRate>250</dsp:SampleRate>
                <dsp:Cutoff1>1</dsp:Cutoff1>
                <dsp:Cutoff2>0</dsp:Cutoff2>
                <dsp:KernelLength>60</dsp:KernelLength>
                <dsp:FilterType>HighPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LDR</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>35</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU16</harp:Type>
              <harp:IsArray>true</harp:IsArray>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Debug tools</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>MicrophoneData</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Threshold">
                <dsp:ThresholdValue>110</dsp:ThresholdValue>
                <dsp:MaxValue>1</dsp:MaxValue>
                <dsp:ThresholdType>Binary</dsp:ThresholdType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Sum" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:GateInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BioDataEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>39</harp:Address>
                <harp:MessageType>Write</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Address</Selector>
                  </Expression>
                  <Expression xsi:type="NotEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>222</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address xsi:nil="true" />
                <harp:MessageType>Write</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address xsi:nil="true" />
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Address</rx:KeySelector>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ReplaySubject">
                    <Name>Data</Name>
                    <BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Type>Timestamp</harp:Type>
                    <harp:IsArray>false</harp:IsArray>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="8" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="viz:LineGraphBuilder">
              <viz:ValueSelector>Item1.TotalMinutes,Item2</viz:ValueSelector>
              <viz:SymbolType>VDash</viz:SymbolType>
              <viz:LineWidth>0</viz:LineWidth>
              <viz:Capacity>10000</viz:Capacity>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="14" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Wind</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:WindSerial">
                <p2:PortName>COM8</p2:PortName>
                <p2:RequestString>0R4!</p2:RequestString>
                <p2:PollingInterval>50</p2:PollingInterval>
                <p2:Timeout>1000</p2:Timeout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%d %d %d %d %d %d %d</Pattern>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>R4 MessageParse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Condition">
                      <Name>Check For Error Codes -9999 and -9990</Name>
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new (
it.Item1 as NorthWindSpeed,
it.Item2 as EastWindSpeed, 
it.Item3 as GustWindSpeeed,
it.Item4 as AirTemperature,
it.Item5 as XOrientation,
it.Item6 as YOrientation,
it.Item7 as NullValue)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NorthWindSpeed</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>246</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EastWindSpeed</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>247</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>GustWindSpeeed</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>248</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AirTemperature</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>249</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>XOrientation</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>250</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>YOrientation</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>251</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NullValue</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Address>252</harp:Address>
              <harp:PayloadType>TimestampedFloat</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LoggingDump</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="2" To="12" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="2" To="18" Label="Source1" />
            <Edge From="2" To="21" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="24" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="24" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="24" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="24" Label="Source4" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="24" Label="Source5" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="24" Label="Source6" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source7" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>