<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ubx="clr-namespace:Bonsai.uBlox;assembly=Bonsai.uBlox"
                 xmlns:lsl="clr-namespace:Bonsai.Lsl;assembly=Bonsai.Lsl"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p4="clr-namespace:Harp.Pluma;assembly=Harp.Pluma"
                 xmlns:p5="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:tkf="clr-namespace:Bonsai.Tinkerforge;assembly=Bonsai.Tinkerforge"
                 xmlns:p6="clr-namespace:Bonsai.Zyre;assembly=Bonsai.Zyre"
                 xmlns:p7="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:p8="clr-namespace:Bonsai.WebSockets;assembly=Extensions"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(harp:Timestamped(sys:Int32),p1:NetMQMessage,sys:String)">
              <rx:Name>PupilSensorLogging</rx:Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value +  it.TimeStamp.ToString("yyyy_MM_dd_HH_mm_ss")</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>HarpSoftwareLogging</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogMuxAddress</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:MessageType>Event</harp:MessageType>
                      <harp:Register xsi:type="harp:FilterMessageAddress">
                        <harp:Address xsi:nil="true" />
                      </harp:Register>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Register xsi:type="harp:FilterMessageAddress">
                        <harp:Address xsi:nil="true" />
                      </harp:Register>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Address</rx:KeySelector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="LogName" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>LogHarpStreams</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="LogName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>Streams</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LoggingPath</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{2}\{0}_{1}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Register</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>LogName</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Path" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\Streams_39</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="8" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source3" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="17" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogReadDump</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessage">
                      <harp:MessageType>Read</harp:MessageType>
                      <harp:Register xsi:type="harp:FilterMessageAddress">
                        <harp:Address xsi:nil="true" />
                      </harp:Register>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MessageBytes</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>StreamReadDump.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\StreamReadDump.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="p2:Mat">
              <rx:Name>MicrophoneData</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogMicrophone</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Microphone.bin</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:MatrixWriter">
                      <dsp:Path>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\Microphone.bin</dsp:Path>
                      <dsp:Suffix>None</dsp:Suffix>
                      <dsp:Overwrite>false</dsp:Overwrite>
                      <dsp:Layout>ColumnMajor</dsp:Layout>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(p3:AccelerometerData,sys:Double,sys:Double)">
              <rx:Name>AccelarometerData</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogAccelarometer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Accelerometer.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\Accelerometer.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(ubx:UbxPacket,sys:Double)">
              <rx:Name>UbxEvents</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1.MessageClass,Item1.MessageId</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LogDemuxUbx</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Data</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>UBX</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogUbxHarp</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="FileName" />
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\neurogears\Desktop\EC_datasets\FMUL2022_10_21_11_20_53\UBX\RXM_RLM.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>false</io:IncludeHeader>
                          <io:Selector>Item2,Item1.MessageClass,Item1.MessageId</io:Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.bin</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogUbx</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Path" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:\Users\neurogears\Desktop\EC_datasets\FMUL2022_10_21_11_20_53\UBX\RXM_RLM.bin</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>false</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="9" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="9" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source4" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="23" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(sys:String,sys:Double)">
              <rx:Name>EmpaticaEvents</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogEmpaticaHarp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>empatica_harp_ts.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\empatica_harp_ts.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(lsl:Timestamped(sys:Int32))">
              <rx:Name>EEG_Marker</rx:Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogEegMarkers</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>eeg_markers.csv</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\eeg_markers.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PupilSensorLogging</Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item3</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>LogDemuxPupilLabs</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Data</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>PupilLabs</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{2}</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Start" DisplayName="StartIndex" />
                    <Property Name="Count" DisplayName="ExpectedIndices" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>3</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LogIndex</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisIndex</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>LogBinary</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisIndex</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>it.Item1[it.Item2]</scr:Expression>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Buffer</Selector>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>FilePath</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisIndex</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}_Frame{1}.bin</Format>
                                <Selector>it.Item1, it.Item2</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Path" Selector="it" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="dsp:MatrixWriter">
                                  <dsp:Path>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\20220922\EmpaticaLDRBenchmark2023_04_12_12_12_18\PupilLabs\WorldCamera_Frame2.csv</dsp:Path>
                                  <dsp:Suffix>None</dsp:Suffix>
                                  <dsp:Overwrite>false</dsp:Overwrite>
                                  <dsp:Layout>ColumnMajor</dsp:Layout>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="1" To="2" Label="Source2" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="10" Label="Source1" />
                              <Edge From="5" To="7" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source3" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject" TypeArguments="harp:Timestamped(p2:IplImage)">
              <rx:Name>PupilDecodedFrames</rx:Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Value != null ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>209</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PupilDecodedFrames</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>pupil_video.avi</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}</Format>
                    <Selector>Item1,Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:Suffix>None</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>30</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="23" To="25" Label="Source1" />
            <Edge From="24" To="26" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Harp.Pluma</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp.Behavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>TimestampSource</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PlumaEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>BioData</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                    <rx:Name>BioDataCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Disabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM8</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>PlumaEvents</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoftwareLogging</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SynchPulse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:Defer">
                    <Name>InterPulseInterval</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Lower" />
                          <Property Name="Upper" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:CreateContinuousUniform">
                            <p5:Lower>10</p5:Lower>
                            <p5:Upper>30</p5:Upper>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:Sample" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT27.276S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SynchPulse</Name>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Object">
                    <rx:Name>SynchPulse</rx:Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <harp:MessageType>Write</harp:MessageType>
                      <beh:Value>DO0</beh:Value>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BioDataCommands</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                      <harp:MessageType>Write</harp:MessageType>
                      <beh:Value>DO0</beh:Value>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BioDataCommands</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Microphone</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>TinkerForge</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Pupil</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:ZyreNode">
                <p6:Name>Pupil</p6:Name>
                <p6:Group>pupil-mobile-v4</p6:Group>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>WhisperEvent</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>EventType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>WhisperEvent</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Content</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>First</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p7:PupilSensor" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>PupilSensorData</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:Defer">
              <Name>WorldCamera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorLoggingName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>WorldCamera</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorLoggingName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>PI world v1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="InitializationCommand" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="InitializationCommand" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZyrePupilSensor.bonsai">
                    <SensorName>PI world v1</SensorName>
                    <SensorLoggingName>WorldCamera</SensorLoggingName>
                    <InitializationCommand>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</InitializationCommand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PupilSensorLogging</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>210</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Last.Buffer</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p7:DecodeByteFrame">
                <p7:BinariesPath>C:\Users\AndréAlmeida\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\FFmpegLib</p7:BinariesPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
            <Expression xsi:type="MulticastSubject">
              <Name>PupilDecodedFrames</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Defer">
                <Name>IMU</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>PupilSensorLogging</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="harp:Format">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>HarpSoftwareLogging</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Gaze</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorLoggingName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Gaze</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorLoggingName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Gaze</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="InitializationCommand" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="InitializationCommand" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZyrePupilSensor.bonsai">
                    <SensorName>Gaze</SensorName>
                    <SensorLoggingName>Gaze</SensorLoggingName>
                    <InitializationCommand>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</InitializationCommand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PupilSensorLogging</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>212</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Key</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorLoggingName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Key</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorLoggingName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>event_000a0000</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="InitializationCommand" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="InitializationCommand" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZyrePupilSensor.bonsai">
                    <SensorName>event_000a0000</SensorName>
                    <SensorLoggingName>Key</SensorLoggingName>
                    <InitializationCommand>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</InitializationCommand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PupilSensorLogging</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Event</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>214</harp:Address>
                <harp:PayloadType>TimestampedU64</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Recording</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PupilSensorData</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorLoggingName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Recording</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorLoggingName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SensorName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>OnePlus 8</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SensorName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="InitializationCommand" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>{"action": "set_control_value", "control_id": "local_capture", "value": "true"}</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="InitializationCommand" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\ZyrePupilSensor.bonsai">
                    <SensorName>OnePlus 8</SensorName>
                    <SensorLoggingName>Recording</SensorLoggingName>
                    <InitializationCommand>{"action": "set_control_value", "control_id": "local_capture", "value": "true"}</InitializationCommand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="13" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="13" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="13" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source4" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="12" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>AdaFruitAcc</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>UBX</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Empatica</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>ECG_Viz</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Wind</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EEG</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>LDR</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Debug tools</Name>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>