<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Zyre;assembly=Bonsai.Zyre"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p3="clr-namespace:NetMQ;assembly=NetMQ"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZyreNode">
          <p1:Name>Pupil</p1:Name>
          <p1:Group>pupil-mobile-v4</p1:Group>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>WhisperEvent</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>EventType</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>WhisperEvent</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Content</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:PupilSensor" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PupilSensorData</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SensorName</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>EventType</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>PupilSensorData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>SensorFilter</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>SensorName</Selector>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Equal">
                <Operand xsi:type="StringProperty">
                  <Value>PI world v1</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Sink">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>SensorUuid</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>2</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:ToMessage" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>CommandEndpoint</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:Push">
                  <zmq:ConnectionString>tcp://192.168.1.82:55948</zmq:ConnectionString>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="9" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="3" To="5" Label="Source1" />
              <Edge From="4" To="6" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="11" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="11" Label="Source2" />
              <Edge From="11" To="12" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:SelectMany">
          <Name>OpenStream</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>DataEndpoint</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:Subscriber">
                  <zmq:ConnectionString>tcp://192.168.1.82:51819</zmq:ConnectionString>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>First</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>PupilSensorData</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Name>SensorFilter</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>SensorName</Selector>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" />
              </Expression>
              <Expression xsi:type="Equal">
                <Operand xsi:type="StringProperty">
                  <Value>PI world v1</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="3" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="4" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Defer">
          <Name>StartStream</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>DataEndpoint</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:Subscriber">
                  <zmq:ConnectionString>tcp://192.168.1.82:56004</zmq:ConnectionString>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
              <Expression xsi:type="MemberSelector">
                <Selector>SensorUuid</Selector>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Value" DisplayName="InitializationCommand" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>2</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:ToMessage" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>CommandEndpoint</Selector>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="zmq:Push">
                  <zmq:ConnectionString>tcp://192.168.1.82:51021</zmq:ConnectionString>
                </Combinator>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="5" Label="Source1" />
              <Edge From="0" To="11" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="5" To="8" Label="Source1" />
              <Edge From="5" To="7" Label="Source1" />
              <Edge From="6" To="7" Label="Source2" />
              <Edge From="7" To="8" Label="Source2" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="10" To="13" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>CameraStream</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PupilSensorData</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>SensorFilter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorName</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>PI world v1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StartStream</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorUuid</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SensorUuid</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataEndpoint</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>DataEndpoint</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CommandEndpoint</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CommandEndpoint</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>NotifyEndpoint</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>NotifyEndpoint</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DataEndpoint</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>CreateSubStream</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://192.168.1.82:52139</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>First</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CommandEndpoint</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:NetMQMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Push">
                <zmq:ConnectionString>tcp://192.168.1.82:56414</zmq:ConnectionString>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>CommandEndpoint</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:BehaviorSubject" TypeArguments="p3:NetMQMessage">
                <rx:Name>Commands</rx:Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="zmq:Push">
                  <zmq:ConnectionString>tcp://192.168.1.82:62548</zmq:ConnectionString>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>NotifyEndpoint</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="zmq:Subscriber">
                  <zmq:ConnectionString>tcp://192.168.1.82:62524</zmq:ConnectionString>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SensorUuid</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>{"action": "set_control_value", "control_id": "streaming", "value": "false"}</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:ToMessage" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SensorUuid</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>{"action": "set_control_value", "control_id": "streaming", "value": "true"}</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:ToMessage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>DataEndpoint</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="ConnectionString" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="zmq:Subscriber">
                  <zmq:ConnectionString>tcp://192.168.1.82:53889</zmq:ConnectionString>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowOutput" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="10" Label="Source1" />
            <Edge From="0" To="14" Label="Source1" />
            <Edge From="0" To="18" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="30" To="32" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="40" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CameraStream</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PupilSensorData</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>SensorFilter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SensorName</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>PI world v1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>DataEndpoint</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>CommandEndpoint</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>NotifyEndpoint</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraStream</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="7" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>