<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:Bonsai.Harp.Expander;assembly=Bonsai.Harp.Expander"
                 xmlns:lsl="clr-namespace:Bonsai.Lsl;assembly=Bonsai.Lsl"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Expander1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>ExpanderCommands1</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM9</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ExpanderEvents1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExanderInput1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>32</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU8</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>17</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>InputOn1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ExpanderTrigger1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>35</harp:Address>
                <harp:MessageType>Write</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>TimestampedU16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>ExpanderTrigger1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ipy:PythonSource">
        <ipy:Script>from System import Random, TimeSpan
random = Random()

@returns(TimeSpan)
def generate():
  yield TimeSpan.FromSeconds((random.NextDouble() * 1) + 0.1)</ipy:Script>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RandomDelay</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.71S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="p1:DigitalOutput">
        <p1:Command>Set</p1:Command>
        <p1:Mask>Output6</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ExpanderCommands1</Name>
      </Expression>
      <Expression xsi:type="p1:DigitalOutput">
        <p1:Command>Clear</p1:Command>
        <p1:Mask>Output6</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ExpanderCommands1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ExpanderTrigger1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="lsl:StreamOutlet">
        <lsl:Name>LslOut1</lsl:Name>
        <lsl:ContentType />
        <lsl:ChannelCount>1</lsl:ChannelCount>
        <lsl:SampleRate>0</lsl:SampleRate>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Expander2</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                <rx:Name>ExpanderCommands2</rx:Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="harp:Device">
                  <harp:DeviceState>Active</harp:DeviceState>
                  <harp:DumpRegisters>true</harp:DumpRegisters>
                  <harp:LedState>On</harp:LedState>
                  <harp:VisualIndicators>On</harp:VisualIndicators>
                  <harp:Heartbeat>Disable</harp:Heartbeat>
                  <harp:IgnoreErrors>false</harp:IgnoreErrors>
                  <harp:PortName>COM3</harp:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:PublishSubject">
                <Name>ExpanderEvents2</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="harp:FilterMessage">
            <harp:Address>32</harp:Address>
            <harp:MessageType>Event</harp:MessageType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="harp:Parse">
          <harp:Type>TimestampedU8</harp:Type>
          <harp:IsArray>false</harp:IsArray>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Value</Selector>
              </Expression>
              <Expression xsi:type="Equal">
                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                  <Value>17</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Seconds</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="lsl:StreamOutlet">
          <lsl:Name>LslOut2</lsl:Name>
          <lsl:ContentType />
          <lsl:ChannelCount>1</lsl:ChannelCount>
          <lsl:SampleRate>0</lsl:SampleRate>
        </Builder>
      </Expression>
      <Expression xsi:type="lsl:StreamInlet">
        <lsl:Name>LslOut1</lsl:Name>
        <lsl:ContentType />
        <lsl:ChannelCount>1</lsl:ChannelCount>
        <lsl:ChunkSize xsi:nil="true" />
        <lsl:ChannelFormat>Float32</lsl:ChannelFormat>
        <lsl:ProcessingOptions>None</lsl:ProcessingOptions>
      </Expression>
      <Expression xsi:type="lsl:StreamInlet">
        <lsl:Name>LslOut2</lsl:Name>
        <lsl:ContentType />
        <lsl:ChannelCount>1</lsl:ChannelCount>
        <lsl:ChunkSize xsi:nil="true" />
        <lsl:ChannelFormat>Float32</lsl:ChannelFormat>
        <lsl:ProcessingOptions>None</lsl:ProcessingOptions>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>received-timestamps.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="21" To="28" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="26" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>