<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>BehaviorCommands1</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM11</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BehaviorEvents1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>44</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU16</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>headset-stream.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>BehaviorCommands2</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BehaviorEvents2</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>44</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU16</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>screen-stream.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
          <zmq:Topic />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Last</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:ConvertToString" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it == "ON"</scr:Expression>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>BehaviorEvents1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>zmq-events.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>