<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>BioDataCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BioDataEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>7</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BioDataCommands</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EnableStream</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>40</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>1</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BioDataCommands</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>SynchOff</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>15</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BioDataCommands</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EnableStream</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BioDataEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>35</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU16</harp:Type>
        <harp:IsArray>true</harp:IsArray>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Photodiode</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>10</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>60</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>BioDataEvents</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>switch-times-unity.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>SwitchTrigger</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>switch</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Publisher">
          <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>BioDataEvents</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>switch-times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>500</p1:Lower>
          <p1:Upper>1500</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SampleArray">
          <p1:Count>1</p1:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1.415S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SwitchTrigger</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>