WorkflowBuilder(Version=2.8.1)
ExternalizedMapping(DataPath(Category=MetaData), City(Category=MetaData), CityPath(Category=MetaData), SubjectID(Category=MetaData))
-> GroupWorkflow ExperimentMetadata(Description="Specifies mandatory metadata for the collected dataset.")
    ExternalizedMapping(Value(DisplayName=DataPath))
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=C:\OutdoorData)
    -> EnsureIdentifier(Message="Path to the root data folder must be specified.") => #2
    ExternalizedMapping(Value(DisplayName=City))
    -> StringProperty(Value=Lisbon)
    -> EnsureIdentifier(Message="Non-empty city must be specified.") => #5
    ExternalizedMapping(Value(DisplayName=CityPath))
    -> StringProperty(Value=Alfama)
    -> EnsureIdentifier(Message="Non-empty city path must be specified.") => #8
    ExternalizedMapping(Value(DisplayName=SubjectID))
    -> StringProperty(Value=Pluma01)
    -> EnsureIdentifier(Message="Non-empty subject ID must be specified.") => #11
    #2, #5, #8, #11 -> Zip
    -> Take(Count=1)
    -> Format(Format={0}\{1}_{2}_sub-{3}, Selector="Item1,Item2,Item3,Item4")
    -> WorkflowOutput
-> GroupWorkflow Logging
    WorkflowInput Source1
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Value + "_" + TimeStamp.UtcDateTime.ToString("yyyy-MM-ddTHHmmssZ")
    -> Add(Operand=StringProperty(Value=\))
    -> Take(Count=1)
    -> AsyncSubject LoggingPath

    BehaviorSubject<Bonsai.Harp.HarpMessage> HarpSoftwareLogging => #6
    -> GroupWorkflow LogMuxAddress
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Write))
            -> WorkflowOutput
        #0 -> Condition => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Event))
            -> WorkflowOutput
        #1, #2 -> Merge
        -> GroupBy(KeySelector=Address) => #4
        ExternalizedMapping(LogName) => #5
        #4, #5 -> SelectMany LogHarpStreams
            WorkflowInput Source1
            -> AsyncSubject Register

            ExternalizedMapping(Value(DisplayName=LogName))
            -> StringProperty(Value=Streams)
            -> Take(Count=1) => #4
            SubscribeSubject Register
            -> MemberSelector(Selector=Key) => #6
            SubscribeSubject LoggingPath => #7
            #4, #6, #7 -> Zip
            -> Format(Format={2}\{0}_{1}, Selector="Item1,Item2,Item3")
            -> Take(Count=1)
            -> AsyncSubject LogName

            SubscribeSubject Register
            -> Merge
            -> MemberSelector(Selector=MessageBytes) => #14
            SubscribeSubject LogName
            -> PropertyMapping(Path) => #16
            #14, #16 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput
    #6 -> GroupWorkflow LogReadDump
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Read))
            -> WorkflowOutput
        -> MemberSelector(Selector=MessageBytes) => #2
        SubscribeSubject LoggingPath => #3
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=StreamReadDump.bin) => #5
        #3, #5 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(Path) => #8
        #2, #8 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
        -> WorkflowOutput

    BehaviorSubject<OpenCV.Net.Mat> MicrophoneData
    -> GroupWorkflow LogMicrophone
        WorkflowInput Source1 => #0
        SubscribeSubject LoggingPath => #1
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=Microphone.bin) => #3
        #1, #3 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(Path) => #6
        #0, #6 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(AccelerometerData,System.Double,System.Double)> AccelerometerData
    -> GroupWorkflow LogAccelerometer
        WorkflowInput Source1 => #0
        SubscribeSubject LoggingPath => #1
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=Accelerometer.csv) => #3
        #1, #3 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(EmotionalCities.uBlox.UbxPacket,System.Double)> UbxEvents
    -> GroupBy(KeySelector="Item1.MessageClass,Item1.MessageId")
    -> SelectMany LogDemuxUbx
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        SubscribeSubject LoggingPath => #2
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=UBX) => #4
        SubscribeSubject Data
        -> MemberSelector(Selector=Key.Item1) => #6
        SubscribeSubject Data
        -> MemberSelector(Selector=Key.Item2) => #8
        #2, #4, #6, #8 -> Zip
        -> Format(Format={0}\{1}\{3}, Selector="Item1,Item2,Item3,Item4")
        -> Take(Count=1)
        -> AsyncSubject FilePath

        SubscribeSubject Data
        -> Merge => #14
        SubscribeSubject FilePath
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(FileName) => #17
        #14, #17 -> GroupWorkflow LogUbxHarp
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Item2,Item1.MessageClass,Item1.MessageId")
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #19
        SubscribeSubject FilePath
        -> Format(Format={0}.bin, Selector=it)
        -> PropertyMapping(Path) => #22
        #19, #22 -> GroupWorkflow LogUbx
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageBytes) => #1
            ExternalizedMapping(Path) => #2
            #1, #2 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(System.String,System.Double)> EmpaticaEvents
    -> GroupWorkflow LogEmpaticaHarp
        WorkflowInput Source1 => #0
        SubscribeSubject LoggingPath => #1
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=empatica_harp_ts.csv) => #3
        #1, #3 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="")
        -> WorkflowOutput

    BehaviorSubject<Bonsai.Harp.Timestamped(EmotionalCities.Lsl.Timestamped(System.Int32))> EegMarker
    -> GroupWorkflow LogEegMarkers
        WorkflowInput Source1 => #0
        SubscribeSubject LoggingPath => #1
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=eeg_markers.csv) => #3
        #1, #3 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="")
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Int32),NetMQ.NetMQMessage,System.String)> PupilSensorLogging
    -> GroupBy(KeySelector=Item3)
    -> SelectMany LogDemuxPupilLabs
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        SubscribeSubject LoggingPath => #2
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=PupilLabs) => #4
        SubscribeSubject Data
        -> MemberSelector(Selector=Key) => #6
        #2, #4, #6 -> Zip
        -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
        -> Take(Count=1)
        -> AsyncSubject FilePath

        ExternalizedMapping(Start(DisplayName=StartIndex), Count(DisplayName=ExpectedIndices))
        -> Range(Start=0, Count=3)
        -> CreateObservable LogIndex
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisIndex

            SubscribeSubject Data
            -> Merge
            -> MemberSelector(Selector=Item2)
            -> GroupWorkflow LogBinary
                WorkflowInput Source1 => #0
                SubscribeSubject ThisIndex => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1[it.Item2]
                -> MemberSelector(Selector=Buffer) => #4
                SubscribeSubject FilePath => #5
                SubscribeSubject ThisIndex => #6
                #5, #6 -> Zip
                -> Format(Format={0}_Frame{1}.bin, Selector="it.Item1, it.Item2")
                -> PropertyMapping(Path(Selector=it)) => #9
                #4, #9 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput

    BehaviorSubject<Bonsai.Harp.Timestamped(OpenCV.Net.IplImage)> PupilDecodedFrames => #23
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #24
      Expression: it.Value != null ? 1 : 0
    #23 -> MemberSelector(Selector=Seconds) => #25
    #24, #25 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=209, PayloadType=TimestampedU64))
    -> MulticastSubject HarpSoftwareLogging

    SubscribeSubject PupilDecodedFrames
    -> Condition DropNull
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> GroupWorkflow LogVideo
        WorkflowInput Source1 => #0
        SubscribeSubject LoggingPath => #1
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=pupil_video.avi) => #3
        #1, #3 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
        -> WorkflowOutput

    SubscribeSubject PupilDecodedFrames
    -> Condition DropNull
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #36
    -> IntProperty(Value=1) => #37
    #37, #36 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=300, PayloadType=TimestampedU64))
    -> MulticastSubject HarpSoftwareLogging

GroupWorkflow Acquisition => #3
    ExternalizedMapping(DueTime, Upper, Lower)
    -> GroupWorkflow Harp.Pluma
        GroupWorkflow TimestampSource
            SubscribeSubject PlumaEvents
            -> EmotionalCities.Pluma.Parse(Register=EmotionalCities.Pluma.TimestampedEcgAndAnalogData)
            -> MemberSelector(Selector=Seconds)
            -> BehaviorSubject TimestampSource
            -> WorkflowOutput

        GroupWorkflow BioData
            BehaviorSubject<Bonsai.Harp.HarpMessage> PlumaCommands
            -> EmotionalCities.Pluma.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
            -> PublishSubject PlumaEvents
            -> MulticastSubject HarpSoftwareLogging
            -> WorkflowOutput

            SubscribeSubject PlumaEvents
            -> Take(Count=1) => #6
            -> EmotionalCities.Pluma.CreateMessage(MessageType=Write, Payload=EmotionalCities.Pluma.CreateStreamsDisablePayload(StreamsDisable="Oximeter Ecg Gsr"))
            -> MulticastSubject PlumaCommands
            #6 -> EmotionalCities.Pluma.CreateMessage(MessageType=Write, Payload=EmotionalCities.Pluma.CreateOutputClearPayload(OutputClear="DO0 DO1"))
            -> MulticastSubject PlumaCommands

            Timer(DueTime=PT1S, Period=PT0S)
            -> EmotionalCities.Pluma.CreateMessage(MessageType=Write, Payload=EmotionalCities.Pluma.CreateStreamsEnablePayload(StreamsEnable="Oximeter Ecg Gsr Accelerometer"))
            -> MulticastSubject PlumaCommands

        ExternalizedMapping(DueTime, Lower, Upper)
        -> GroupWorkflow SynchPulse
            ExternalizedMapping(Lower, Upper)
            -> Defer InterPulseInterval
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=8, Upper=16)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT14.567S, Period=PT0S)
                -> WorkflowOutput
            -> Repeat
            -> MulticastSubject SynchPulse

            PublishSubject<System.Object> SynchPulse
            -> EmotionalCities.Pluma.CreateMessage(MessageType=Write, Payload=EmotionalCities.Pluma.CreateOutputSetPayload(OutputSet="DO0 DO1"))
            -> MulticastSubject PlumaCommands => #6
            ExternalizedMapping(DueTime) => #7
            #6, #7 -> Delay(DueTime=PT0.1S)
            -> EmotionalCities.Pluma.CreateMessage(MessageType=Write, Payload=EmotionalCities.Pluma.CreateOutputClearPayload(OutputClear="DO0 DO1"))
            -> MulticastSubject PlumaCommands
            -> WorkflowOutput

    GroupWorkflow Microphone
        Bonsai.Audio.AudioCapture(DeviceName="Line (Sound Blaster G3)", SampleRate=44100, SampleFormat=Stereo16, BufferLength=10)
        -> MulticastSubject MicrophoneData
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=222, PayloadType=TimestampedS32))
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    GroupWorkflow TinkerForge
        EmotionalCities.Tinkerforge.CreateBrickConnection(HostName=localhost, Port=4223) => #0
        -> GroupWorkflow GPS => #1
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.GPSV2(Uid=PvW, SBAS=Disabled, StatusLed=ShowStatus, DateTimePeriod=1000, AltitudePeriod=1000, CoordinatePeriod=1000, StatusPeriod=1000) => #1
            -> EmotionalCities.Tinkerforge.GPSV2Coordinate
            -> MemberSelector(Selector="Latitude,NS,Longitude,EW")
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression:
                new(it.Item1 * (it.Item2 == 'n'? 1 : -1) as Latitude,
                it.Item3 * (it.Item4 == 'e'? 1 : -1) as Longitude)
            -> MemberSelector(Selector=Latitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=227, PayloadType=TimestampedS64)) => #7
            #4 -> MemberSelector(Selector=Longitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=228, PayloadType=TimestampedS64)) => #10
            #1 -> EmotionalCities.Tinkerforge.GPSV2Altitude
            -> MemberSelector(Selector=Altitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=229, PayloadType=TimestampedS32)) => #14
            #1 -> EmotionalCities.Tinkerforge.GPSV2DateTime => #15
            -> MemberSelector(Selector=Date)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=230, PayloadType=TimestampedS64)) => #18
            #15 -> MemberSelector(Selector=Time)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=231, PayloadType=TimestampedS64)) => #21
            #1 -> EmotionalCities.Tinkerforge.GPSV2Status
            -> MemberSelector(Selector=HasFix)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=232, PayloadType=TimestampedU8)) => #25
            #7, #10, #14, #18, #21, #25 -> Merge
            -> WorkflowOutput
        #0 -> GroupWorkflow AirQuality => #2
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.AirQuality(Uid=Xco, Period=1000, TemperatureOffset=0, BackgroundCalibrationDuration=Days4, StatusLed=ShowStatus) => #1
            -> MemberSelector(Selector=IaqIndex)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=233, PayloadType=TimestampedS32)) => #4
            #1 -> MemberSelector(Selector=Temperature)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=234, PayloadType=TimestampedS32)) => #7
            #1 -> MemberSelector(Selector=Humidity)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=235, PayloadType=TimestampedS32)) => #10
            #1 -> MemberSelector(Selector=AirPressure)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=236, PayloadType=TimestampedS32)) => #13
            #4, #7, #10, #13 -> Merge
            -> WorkflowOutput
        #0 -> GroupWorkflow SoundPressure => #3
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.SoundPressureLevel(Uid=XzC, Period=10, FftSize=FftSize512, Weighting=WeightingITU, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=237, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow Humidity => #4
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.HumidityV2(Uid=WhE, Period=10, Heater=Disabled, MovingAverageLengthTemperature=5, MovingAverageLengthHumidity=5, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=238, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow AnalogInput => #5
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.AnalogInV3(Uid=Zmo, Period=10, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=239, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow IndustrialDual020mAV2 => #6
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.IndustrialDual020mAV2(Uid=Prc, Period=10, Channel=0, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=243, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow Thermocouple => #7
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.ThermocoupleV2(Uid=WpT, Period=10, Averaging=Averaging1, Type=TypeK, Filter=Filter50Hz, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=244, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow PTCV2 => #8
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.PTCV2(Uid=KW8, Period=10, MovingAverageLengthTemperature=1, MovingAverageLengthResistance=1, WireMode=WireMode2, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=245, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow "Particulate Matter" => #9
            WorkflowInput Source1
            -> EmotionalCities.Tinkerforge.ParticulateMatter(Uid=LdX, Period=10, StatusLed=ShowStatus) => #1
            -> MemberSelector(Selector=Pm10)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=240, PayloadType=TimestampedS32)) => #4
            #1 -> MemberSelector(Selector=Pm25)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=241, PayloadType=TimestampedS32)) => #7
            #1 -> MemberSelector(Selector=Pm100)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=242, PayloadType=TimestampedS32)) => #10
            #4, #7, #10 -> Merge
            -> WorkflowOutput
        #1, #2, #3, #4, #5, #6, #7, #8, #9 -> Merge
        -> PublishSubject Tinkerforge
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    GroupWorkflow Pupil
        EmotionalCities.Pupil.PupilDevice(Interface=192.168.137.1)
        -> Bonsai.IO.WriteLine
        -> PublishSubject PupilSensorData
        -> WorkflowOutput

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorName="PI world v1", SensorLoggingName=WorldCamera)
        -> MulticastSubject PupilSensorLogging => #6
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=210, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging
        -> Disable ElementIndex
        -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
        #6 -> MemberSelector(Selector=Item2.Last.Buffer) => #12
        ExternalizedMapping(Value(DisplayName=Path))
        -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=..\LocalPackages\FFMPEGlib)
        -> PropertyMapping(BinariesPath) => #15
        #12, #15 -> EmotionalCities.Pupil.DecodeVideoFrame(BinariesPath=..\LocalPackages\FFMPEGlib)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> MulticastSubject PupilDecodedFrames
        -> Disable ElementIndex
        -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorName=Gaze, SensorLoggingName=Gaze)
        -> MulticastSubject PupilSensorLogging
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=212, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorName=event_000a0000, SensorLoggingName=Key)
        -> MulticastSubject PupilSensorLogging
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=214, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorName="OnePlus 8", SensorLoggingName=Recording)

    GroupWorkflow AdaFruitAcc
        ExternalizedMapping(PortName)
        -> Bonsai.IO.CreateSerialPort
          Name=Accel
          PortName=COM16
          BaudRate=115200
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=Accel, NewLine=\r\n)
        -> ParseAccelerometerString => #3
        SubscribeSubject TimestampSource => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject PlumaEvents
        -> EmotionalCities.Pluma.Parse(Register=EmotionalCities.Pluma.TimestampedAccelerometerData)
        -> MemberSelector(Selector=Seconds) => #8
        #5, #8 -> Zip
        -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as AccData,
            it.Item2 as TriggerTimestamp,
            it.Item3 as TimestampSource)
        -> MemberSelector(Selector="AccData,TriggerTimestamp,TimestampSource")
        -> MulticastSubject AccelerometerData
        -> WorkflowOutput

    GroupWorkflow UBX
        EmotionalCities.uBlox.Device(PortName=COM15) => #0
        SubscribeSubject TimestampSource => #1
        #0, #1 -> WithLatestFrom => #2
        -> MulticastSubject UbxEvents
        -> WorkflowOutput
        #2 -> MemberSelector(Selector=Item1.MessageId)
        #0 -> Condition => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageId)
            -> Equal(Operand=WorkflowProperty<EmotionalCities.uBlox.MessageId>(Value=TIM_TM2))
            -> WorkflowOutput
        -> MemberSelector(Selector=PayloadLength)
        #6 -> MemberSelector(Selector=MessageBytes)
        -> Index(Operand=IntProperty(Value=7))
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=21))
            -> WorkflowOutput
        #0 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageId)
            -> Equal(Operand=WorkflowProperty<EmotionalCities.uBlox.MessageId>(Value=TIM_TP))
            -> WorkflowOutput
        #0 -> Condition NAV_POSLLH => #12
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageId)
            -> Equal(Operand=WorkflowProperty<EmotionalCities.uBlox.MessageId>(Value=NAV_HPPOSLLH))
            -> WorkflowOutput
        -> MemberSelector(Selector=MessageBytes) => #13
        -> ParseNavHPPOSLLH(Offset=6) => #14
        -> MemberSelector(Selector=Lon)
        #14 -> MemberSelector(Selector=Lat)
        #14 -> MemberSelector(Selector=HAcc)
        #14 -> MemberSelector(Selector=VAcc)
        #14 -> MemberSelector(Selector=MESSAGE_ID)
        #14 -> MemberSelector(Selector=Version)
        #13 -> MemberSelector(Selector=Length)
        #12 -> MemberSelector(Selector=PayloadLength)

    GroupWorkflow Empatica
        Defer InitializeClient
            StringProperty(Value=127.0.0.1)
            -> Take(Count=1)
            -> AsyncSubject E4_Host

            IntProperty(Value=28000)
            -> Take(Count=1)
            -> AsyncSubject E4_Port

            StringProperty(Value=11111111111111111111111111111111)
            -> Take(Count=1)
            -> AsyncSubject E4_API_KEY

            BehaviorSubject<System.String> EmpaticaCommands => #9
            SubscribeSubject E4_Host
            -> PropertyMapping(Host) => #11
            SubscribeSubject E4_Port
            -> PropertyMapping(Port) => #13
            #9, #11, #13 -> EmpaticaClient(Host=127.0.0.1, Port=28000) => #14
            SubscribeSubject TimestampSource => #15
            #14, #15 -> WithLatestFrom
            -> MulticastSubject EmpaticaEvents
            -> WorkflowOutput

            Disable StringProperty(Value=device_list)
            -> Disable MulticastSubject EmpaticaCommands
            -> Disable GroupWorkflow "Device List"
                WorkflowInput Source1
                -> WorkflowOutput

            StringProperty(Value=73735A)
            -> Format(Format="device_connect {0}", Selector=it)
            -> MulticastSubject EmpaticaCommands

            StringProperty(Value=acc) => #25
            StringProperty(Value=bvp) => #26
            StringProperty(Value=gsr) => #27
            StringProperty(Value=ibi) => #28
            StringProperty(Value=tmp) => #29
            StringProperty(Value=bat) => #30
            StringProperty(Value=tag) => #31
            #25, #26, #27, #28, #29, #30, #31 -> Merge => #32
            Timer(DueTime=PT1S, Period=PT0.1S)
            -> Take(Count=7) => #34
            #32, #34 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Format(Format="device_subscribe {0} ON", Selector=it)
            -> MulticastSubject EmpaticaCommands
        -> DelaySubscription(DueTime=PT5S)
        -> WorkflowOutput

    GroupWorkflow Wind
        WindSerial(PortName=COM17, RequestString=0R4!, PollingInterval=50, Timeout=1000)
        -> Parse(Pattern="%d %d %d %d %d %d %d")
        -> GroupWorkflow "R4 MessageParse" => #2
            WorkflowInput Source1
            -> Condition "Check For Error Codes -9999 and -9990"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item3)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item4)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item5)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item6)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item7)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
                  Expression: it!=-9999 && it!= -9990
                #2, #4, #6, #8, #10, #12, #14 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                it.Item1 as NorthWindSpeed,
                it.Item2 as EastWindSpeed,
                it.Item3 as GustWindSpeeed,
                it.Item4 as AirTemperature,
                it.Item5 as XOrientation,
                it.Item6 as YOrientation,
                it.Item7 as NullValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=NorthWindSpeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=246, PayloadType=TimestampedFloat)) => #5
        #2 -> MemberSelector(Selector=EastWindSpeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=247, PayloadType=TimestampedFloat)) => #8
        #2 -> MemberSelector(Selector=GustWindSpeeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=248, PayloadType=TimestampedFloat)) => #11
        #2 -> MemberSelector(Selector=AirTemperature)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=249, PayloadType=TimestampedFloat)) => #14
        #2 -> MemberSelector(Selector=XOrientation)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=250, PayloadType=TimestampedFloat)) => #17
        #2 -> MemberSelector(Selector=YOrientation)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=251, PayloadType=TimestampedFloat)) => #20
        #2 -> MemberSelector(Selector=NullValue)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=252, PayloadType=TimestampedFloat)) => #23
        #5, #8, #11, #14, #17, #20, #23 -> Merge
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    GroupWorkflow EEG
        SubscribeSubject SynchPulse
        -> IntProperty(Value=1)
        -> Accumulate
        -> EmotionalCities.Lsl.StreamOutlet EmotionalCitiesStream1(ContentType=Markers, ChannelCount=1, Selector=it, SampleRate=0) => #3
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35000)) => #7
        Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35100)) => #11
        Bonsai.Windows.Input.KeyDown(Filter=G, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35200)) => #15
        Bonsai.Windows.Input.KeyDown(Filter=J, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35300)) => #19
        #7, #11, #15, #19 -> Merge
        -> PublishSubject EEgKeyboardStream
        -> EmotionalCities.Lsl.StreamOutlet EmotionalCitiesStream2(ContentType=Markers, ChannelCount=1, Selector=it, SampleRate=0) => #22
        #3, #22 -> Merge
        -> EmotionalCities.Lsl.Timestamp => #24
        SubscribeSubject TimestampSource => #25
        #24, #25 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> MulticastSubject EegMarker
        -> WorkflowOutput

    Disable GroupWorkflow LDR
        SubscribeSubject PlumaEvents
        -> EmotionalCities.Pluma.Parse(Register=EmotionalCities.Pluma.TimestampedEcgAndAnalogData)
        -> MemberSelector(Selector=Value.Adc)
        -> WorkflowOutput

    Disable GroupWorkflow "Debug tools"
        SubscribeSubject MicrophoneData
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai) => #1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Dsp.Threshold(ThresholdValue=110, MaxValue=1, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #7, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> GateInterval(Interval=PT1S) => #10
        SubscribeSubject PlumaEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Write, Address=nil)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #13
        #10, #13 -> Zip
        -> Subtract

        SubscribeSubject HarpSoftwareLogging
        -> Condition => #17
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> NotEqual(Operand=IntProperty(Value=222))
            -> WorkflowOutput
        -> Bonsai.Harp.FilterMessage(MessageType=Write, Address=nil) => #18
        #17 -> Bonsai.Harp.FilterMessage(MessageType=Event, Address=nil) => #19
        #18, #19 -> Merge
        -> GroupBy(KeySelector=Address)
        -> SelectMany
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> Merge
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: TimeSpan.FromSeconds(it)
            SubscribeSubject Data
            -> MemberSelector(Selector=Key) => #7
            #5, #7 -> WithLatestFrom
            -> WorkflowOutput
        -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item1.TotalMinutes,Item2", SymbolType=VDash, LineWidth=0, Capacity=10000, XMin=nil, XMax=nil, YMin=nil, YMax=nil)

        GroupWorkflow PupilDebug
            SubscribeSubject PupilDecodedFrames
            -> MemberSelector(Selector=Value)
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it == null
                -> BitwiseNot
                -> WorkflowOutput
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> GreaterThan(Operand=DoubleProperty(Value=50))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Scan
                WorkflowInput Source1
                -> MemberSelector(Selector=Accumulation)
                -> Add(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> WorkflowOutput

    Disable GroupWorkflow "Pupil Debug"
        SubscribeSubject PupilDecodedFrames
        -> Condition DropNull
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate => #9
        SubscribeSubject SynchPulse
        -> IntProperty(Value=1)
        -> Accumulate => #12
        #9, #12 -> CombineLatest

        SubscribeSubject PupilDecodedFrames
        -> Condition DropNull
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalMilliseconds)
        -> WindowCount(Count=100, Skip=10)
        -> SelectMany
            WorkflowInput Source1
            -> Sum
            -> Divide(Operand=DoubleProperty(Value=100))
            -> WorkflowOutput
Bonsai.Windows.Input.KeyDown(Filter=Q, SuppressRepetitions=true) => #4
#3, #4 -> TakeUntil

ExternalizedMapping(MinimumDistanceMeters(Category=GPS), PathOriginLat(Category=GPS), PathOriginLon(Category=GPS))
-> GroupWorkflow ControlPanel
    SubscribeSubject PlumaEvents => #0
    ExternalizedMapping(Interval(DisplayName=PlumaSample, Category=Pluma)) => #1
    #0, #1 -> SampleInterval(Interval=PT1S) => #2
    ExternalizedMapping(Interval(DisplayName=PlumaTimeout, Category=Pluma)) => #3
    #2, #3 -> StreamingStatus(Name=Pluma, Interval=PT3S)
    -> VisualizerMapping => #5
    SubscribeSubject MicrophoneData => #6
    ExternalizedMapping(Interval(DisplayName=MicrophoneSample, Category=Microphone)) => #7
    #6, #7 -> SampleInterval(Interval=PT1S) => #8
    ExternalizedMapping(Interval(DisplayName=MicrophoneTimeout, Category=Microphone)) => #9
    #8, #9 -> StreamingStatus(Name=Microphone, Interval=PT3S)
    -> VisualizerMapping => #11
    SubscribeSubject AccelerometerData => #12
    ExternalizedMapping(Interval(DisplayName=AccelerometerSample, Category=Accelerometer)) => #13
    #12, #13 -> SampleInterval(Interval=PT1S) => #14
    ExternalizedMapping(Interval(DisplayName=AccelerometerTimeout, Category=Accelerometer)) => #15
    #14, #15 -> StreamingStatus(Name=Accelerometer, Interval=PT3S)
    -> VisualizerMapping => #17
    SubscribeSubject UbxEvents => #18
    ExternalizedMapping(Interval(DisplayName=UbxSample, Category=Ubx)) => #19
    #18, #19 -> SampleInterval(Interval=PT1S) => #20
    ExternalizedMapping(Interval(DisplayName=UbxTimeout, Category=Ubx)) => #21
    #20, #21 -> StreamingStatus(Name=UBX, Interval=PT3S)
    -> VisualizerMapping => #23
    SubscribeSubject EmpaticaEvents => #24
    ExternalizedMapping(Interval(DisplayName=EmpaticaSample, Category=Empatica)) => #25
    #24, #25 -> SampleInterval(Interval=PT1S) => #26
    ExternalizedMapping(Interval(DisplayName=EmpaticaTimeout, Category=Empatica)) => #27
    #26, #27 -> StreamingStatus(Name=Empatica, Interval=PT3S)
    -> VisualizerMapping => #29
    SubscribeSubject PupilSensorLogging => #30
    ExternalizedMapping(Interval(DisplayName=PupilSample, Category=Pupil)) => #31
    #30, #31 -> SampleInterval(Interval=PT1S) => #32
    ExternalizedMapping(Interval(DisplayName=PupilTimeout, Category=Pupil)) => #33
    #32, #33 -> StreamingStatus(Name=Pupil, Interval=PT3S)
    -> VisualizerMapping => #35
    SubscribeSubject Tinkerforge => #36
    ExternalizedMapping(Interval(DisplayName=TinkerforgeSample, Category=Tinkerforge)) => #37
    #36, #37 -> SampleInterval(Interval=PT1S) => #38
    ExternalizedMapping(Interval(DisplayName=TinkerforgeTimeout, Category=Tinkerforge)) => #39
    #38, #39 -> StreamingStatus(Name=Tinkerforge, Interval=PT3S)
    -> VisualizerMapping => #41
    SubscribeSubject TimestampSource => #42
    ExternalizedMapping(Interval(DisplayName=WindSample, Category=Wind)) => #43
    #42, #43 -> SampleInterval(Interval=PT1S) => #44
    ExternalizedMapping(Interval(DisplayName=WindTimeout, Category=Wind)) => #45
    #44, #45 -> StreamingStatus(Name=Wind, Interval=PT3S)
    -> VisualizerMapping => #47
    SubscribeSubject SynchPulse => #48
    ExternalizedMapping(Interval(DisplayName=EegSample, Category=Eeg)) => #49
    #48, #49 -> SampleInterval(Interval=PT1S) => #50
    ExternalizedMapping(Interval(DisplayName=EegTimeout, Category=Eeg)) => #51
    #50, #51 -> StreamingStatus(Name=EEG, Interval=PT1M3S)
    -> VisualizerMapping => #53
    SubscribeSubject UbxEvents
    -> MemberSelector(Selector=Item1)
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=MessageId)
        -> Equal(Operand=WorkflowProperty<EmotionalCities.uBlox.MessageId>(Value=NAV_HPPOSLLH))
        -> WorkflowOutput
    -> MemberSelector(Selector=MessageBytes)
    -> ParseNavHPPOSLLH(Offset=6) => #58
    ExternalizedMapping(Lat(DisplayName=PathOriginLat, Category=GPS), Lon(DisplayName=PathOriginLon, Category=GPS)) => #59
    #58, #59 -> LatLongDistance(Lat=38.746252451359204, Lon=-9.1615605804701836)
    -> PublishSubject GpsDistance => #61
    ExternalizedMapping(MinimumDistanceMeters) => #62
    #61, #62 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=MinimumDistanceMeters, Category=GPS)) => #1
        #0, #1 -> LessThan(Operand=DoubleProperty(Value=350))
        -> WorkflowOutput
    -> StreamingStatus(Name="Start Point", Interval=PT3S)
    -> VisualizerMapping => #65
    #5, #11, #17, #23, #29, #35, #41, #47, #53, #65 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=1, RowCount=10, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping => #67
    SubscribeSubject ECGViz
    -> VisualizerMapping => #69
    SubscribeSubject EEgKeyboardStream
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.ObjectTextVisualizer>) => #71
    SubscribeSubject GpsDistance
    -> VisualizerMapping => #73
    #69, #71, #73 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
      ColumnCount=1
      RowCount=9
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=4), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=4))
    -> VisualizerMapping => #75
    #67, #75 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput
