WorkflowBuilder(Version=2.7.3)
GroupWorkflow ExperimentMetadata(Description="Specifies mandatory metadata for the collected dataset.")
    ExternalizedMapping(Value(DisplayName=City))
    -> StringProperty(Value=NGR)
    -> EnsureIdentifier(Message="Non-empty city must be specified.") => #2
    ExternalizedMapping(Value(DisplayName=CityPath))
    -> StringProperty(Value=LAB)
    -> EnsureIdentifier(Message="Non-empty city path must be specified.") => #5
    ExternalizedMapping(Value(DisplayName=SubjectID))
    -> StringProperty(Value=01)
    -> EnsureIdentifier(Message="Non-empty subject ID must be specified.") => #8
    ExternalizedMapping(Value(DisplayName=DataPath))
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=C:\IndoorData)
    -> EnsureIdentifier(Message="Path to the root data folder must be specified.") => #11
    #11, #2, #5, #8 -> Zip
    -> Take(Count=1)
    -> Format(Format={0}\{1}_{2}_sub-{3}, Selector="Item1,Item2,Item3,Item4")
    -> WorkflowOutput
-> GroupWorkflow Logging
    WorkflowInput Source1
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Value + "_" + TimeStamp.UtcDateTime.ToString("yyyy-MM-ddTHHmmssZ")
    -> Add(Operand=StringProperty(Value=\))
    -> Take(Count=1)
    -> AsyncSubject LoggingPath

    BehaviorSubject<Bonsai.Harp.HarpMessage> HarpSoftwareLogging => #6
    -> GroupWorkflow LogMuxAddress
        WorkflowInput Source1 => #0
        -> Condition => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Event))
            -> WorkflowOutput
        #0 -> Condition => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Write))
            -> WorkflowOutput
        #2, #1 -> Merge
        -> GroupBy(KeySelector=Address) => #4
        ExternalizedMapping(LogName) => #5
        #4, #5 -> SelectMany LogHarpStreams
            WorkflowInput Source1
            -> AsyncSubject Register

            SubscribeSubject Register
            -> MemberSelector(Selector=Key) => #3
            ExternalizedMapping(Value(DisplayName=LogName))
            -> StringProperty(Value=Streams)
            -> Take(Count=1) => #6
            SubscribeSubject LoggingPath => #7
            #6, #3, #7 -> Zip
            -> Format(Format={2}\{0}_{1}, Selector="Item1,Item2,Item3")
            -> Take(Count=1)
            -> AsyncSubject LogName

            SubscribeSubject Register
            -> Merge
            -> MemberSelector(Selector=MessageBytes) => #14
            SubscribeSubject LogName
            -> PropertyMapping(Path) => #16
            #14, #16 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput
    #6 -> GroupWorkflow LogReadDump
        WorkflowInput Source1
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Read))
            -> WorkflowOutput
        -> MemberSelector(Selector=MessageBytes) => #2
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=StreamReadDump.bin) => #4
        SubscribeSubject LoggingPath => #5
        #5, #4 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(Path) => #8
        #2, #8 -> Bonsai.Dsp.MatrixWriter(Path=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\StreamReadDump.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
        -> WorkflowOutput

    BehaviorSubject<OpenCV.Net.Mat> MicrophoneData
    -> GroupWorkflow LogMicrophone
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=Microphone.bin) => #1
        WorkflowInput Source1 => #2
        SubscribeSubject LoggingPath => #3
        #3, #1 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(Path) => #6
        #2, #6 -> Bonsai.Dsp.MatrixWriter(Path=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\Microphone.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(AccelerometerData,System.Double,System.Double)> AccelarometerData
    -> GroupWorkflow LogAccelerometer
        SubscribeSubject LoggingPath => #0
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=Accelerometer.csv) => #2
        #0, #2 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #6, #5 -> Bonsai.IO.CsvWriter(FileName=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\Accelerometer.csv, Append=false, Overwrite=true, Suffix=None, IncludeHeader=false)
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(Bonsai.uBlox.UbxPacket,System.Double)> UbxEvents
    -> GroupBy(KeySelector="Item1.MessageClass,Item1.MessageId")
    -> SelectMany LogDemuxUbx
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=UBX) => #3
        SubscribeSubject Data
        -> MemberSelector(Selector=Key.Item1) => #5
        SubscribeSubject Data
        -> MemberSelector(Selector=Key.Item2) => #7
        SubscribeSubject LoggingPath => #8
        #8, #3, #5, #7 -> Zip
        -> Format(Format={0}\{1}\{3}, Selector="Item1,Item2,Item3,Item4")
        -> Take(Count=1)
        -> AsyncSubject FilePath

        SubscribeSubject Data
        -> Merge => #14
        SubscribeSubject FilePath
        -> Format(Format={0}.csv, Selector=it)
        -> PropertyMapping(FileName) => #17
        #14, #17 -> GroupWorkflow LogUbxHarp
            WorkflowInput Source1 => #0
            ExternalizedMapping(FileName) => #1
            #0, #1 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=false, Selector="Item2,Item1.MessageClass,Item1.MessageId")
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1) => #19
        SubscribeSubject FilePath
        -> Format(Format={0}.bin, Selector=it)
        -> PropertyMapping(Path) => #22
        #19, #22 -> GroupWorkflow LogUbx
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageBytes) => #1
            ExternalizedMapping(Path) => #2
            #1, #2 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(System.String,System.Double)> EmpaticaEvents
    -> GroupWorkflow LogEmpaticaHarp
        SubscribeSubject LoggingPath => #0
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=empatica_harp_ts.csv) => #2
        #0, #2 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #6, #5 -> Bonsai.IO.CsvWriter
          FileName=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\empatica_harp_ts.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=true
          Selector=""
        -> WorkflowOutput

    BehaviorSubject<Bonsai.Harp.Timestamped(Bonsai.Lsl.Timestamped(System.Int32))> EEG_Marker
    -> GroupWorkflow LogEegMarkers
        SubscribeSubject LoggingPath => #0
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=eeg_markers.csv) => #2
        #0, #2 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #6, #5 -> Bonsai.IO.CsvWriter(FileName=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\eeg_markers.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="")
        -> WorkflowOutput

    BehaviorSubject<System.Tuple(Bonsai.Harp.Timestamped(System.Int32),NetMQ.NetMQMessage,System.String)> PupilSensorLogging
    -> GroupBy(KeySelector=Item3)
    -> SelectMany LogDemuxPupilLabs
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=PupilLabs) => #3
        SubscribeSubject Data
        -> MemberSelector(Selector=Key) => #5
        SubscribeSubject LoggingPath => #6
        #6, #3, #5 -> Zip
        -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
        -> Take(Count=1)
        -> AsyncSubject FilePath

        ExternalizedMapping(Start(DisplayName=StartIndex), Count(DisplayName=ExpectedIndices))
        -> Range(Start=0, Count=3)
        -> CreateObservable LogIndex
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisIndex

            SubscribeSubject Data
            -> Merge
            -> MemberSelector(Selector=Item2)
            -> GroupWorkflow LogBinary
                WorkflowInput Source1 => #0
                SubscribeSubject ThisIndex => #1
                #0, #1 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1[it.Item2]
                -> MemberSelector(Selector=Buffer) => #4
                SubscribeSubject FilePath => #5
                SubscribeSubject ThisIndex => #6
                #5, #6 -> Zip
                -> Format(Format={0}_Frame{1}.bin, Selector="it.Item1, it.Item2")
                -> PropertyMapping(Path(Selector=it)) => #9
                #4, #9 -> Bonsai.Dsp.MatrixWriter(Path="", Suffix=None, Overwrite=false, Layout=ColumnMajor)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput

    BehaviorSubject<Bonsai.Harp.Timestamped(OpenCV.Net.IplImage)> PupilDecodedFrames => #23
    -> MemberSelector(Selector=Seconds) => #24
    #23 -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
      Expression: it.Value != null ? 1 : 0
    #25, #24 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=209, PayloadType=TimestampedU64))
    -> MulticastSubject HarpSoftwareLogging

    SubscribeSubject PupilDecodedFrames
    -> Condition DropNull
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Value)
    -> GroupWorkflow LogVideo
        SubscribeSubject LoggingPath => #0
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=pupil_video.avi) => #2
        #0, #2 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #6, #5 -> Bonsai.Vision.VideoWriter
          FileName=C:\IndoorData\NGR_LAB_sub-01_2023-10-12T164616Z\\pupil_video.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

    SubscribeSubject PupilDecodedFrames
    -> Condition DropNull
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it == null
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector=Seconds) => #36
    -> IntProperty(Value=1) => #37
    #37, #36 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=300, PayloadType=TimestampedU64))
    -> MulticastSubject HarpSoftwareLogging

    BehaviorSubject<NetMQ.NetMQMessage> VRTransform
    -> IncludeWorkflow(Path=Extensions\ZeroMQLogging.bonsai, LogName=VRTransform.bin)

    BehaviorSubject<System.Tuple(System.String,NetMQ.NetMQMessage)> OmniceptGlia
    -> GroupBy(KeySelector=Item1, ElementSelector=Item2)
    -> SelectMany ZeroMQLogging
        WorkflowInput Source1
        -> ReplaySubject Data(BufferSize=nil)

        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=Glia) => #3
        SubscribeSubject Data
        -> MemberSelector(Selector=Key) => #5
        SubscribeSubject LoggingPath => #6
        #6, #3, #5 -> Zip
        -> Format(Format={0}\{1}\{2}, Selector="Item1,Item2,Item3")
        -> Take(Count=1)
        -> AsyncSubject FilePath

        CreateObservable
            SubscribeSubject Data
            -> Merge
            -> ZeroMQMessageToByteArray => #2
            SubscribeSubject FilePath
            -> PropertyMapping(Path) => #4
            #2, #4 -> Bonsai.Dsp.MatrixWriter(Path=C:\IndoorData\NGR_LAB_sub-01_2023-10-19T033957Z\\Glia\HeartRate, Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput

    BehaviorSubject<NetMQ.NetMQMessage> VRImage
    -> IncludeWorkflow(Path=Extensions\ZeroMQLogging.bonsai, LogName=VRImage.bin)

    SubscribeSubject VRImage
    -> MemberSelector(Selector=Last)
    -> MemberSelector(Selector=Buffer)
    -> Bonsai.Vision.DecodeImage(Mode=Unchanged)
    -> GroupWorkflow LogVideo
        SubscribeSubject LoggingPath => #0
        ExternalizedMapping(Value(DisplayName=LogName))
        -> StringProperty(Value=VRImage.avi) => #2
        #0, #2 -> Zip
        -> Format(Format={0}\{1}, Selector="Item1,Item2")
        -> PropertyMapping(FileName) => #5
        WorkflowInput Source1 => #6
        #6, #5 -> Bonsai.Vision.VideoWriter
          FileName=C:\IndoorData\NGR_LAB_sub-01_2023-10-19T033957Z\\VRImage.avi
          Suffix=None
          Buffered=true
          Overwrite=false
          FourCC=FMP4
          FrameRate=30
          FrameSize(Width=0, Height=0)
          ResizeInterpolation=NearestNeighbor
        -> WorkflowOutput

Bonsai.Windows.Input.KeyDown(Filter=Q, SuppressRepetitions=true) => #2
GroupWorkflow Acquisition => #3
    ExternalizedMapping(DueTime, Upper, Lower)
    -> GroupWorkflow Harp.Pluma
        GroupWorkflow TimestampSource
            SubscribeSubject PlumaEvents
            -> Harp.Pluma.Parse(MessageType=Event, Register=Harp.Pluma.TimestampedEcgAndAnalogData)
            -> MemberSelector(Selector=Seconds)
            -> BehaviorSubject TimestampSource
            -> WorkflowOutput

        GroupWorkflow BioData
            BehaviorSubject<Bonsai.Harp.HarpMessage> PlumaCommands
            -> Harp.Pluma.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
            -> PublishSubject PlumaEvents
            -> MulticastSubject HarpSoftwareLogging
            -> WorkflowOutput

            IntProperty(Value=0)
            -> Take(Count=1) => #6
            -> Harp.Pluma.CreateMessage(Payload=Harp.Pluma.CreateStreamsEnablePayload(MessageType=Write, Value="Oximeter Ecg Gsr"))
            -> MulticastSubject PlumaCommands
            #6 -> Harp.Pluma.CreateMessage(Payload=Harp.Pluma.CreateOutputClearPayload(MessageType=Write, Value="DO0 DO1"))
            -> MulticastSubject PlumaCommands

            Timer(DueTime=PT1S, Period=PT0S)
            -> Harp.Pluma.CreateMessage(Payload=Harp.Pluma.CreateStreamsEnablePayload(MessageType=Write, Value="Oximeter Ecg Gsr Accelerometer"))
            -> MulticastSubject PlumaCommands

        ExternalizedMapping(DueTime, Lower, Upper)
        -> GroupWorkflow SynchPulse
            ExternalizedMapping(Lower, Upper)
            -> Defer InterPulseInterval
                ExternalizedMapping(Lower, Upper)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=8, Upper=16)
                -> Bonsai.Numerics.Distributions.Sample
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT8.605S, Period=PT0S)
                -> WorkflowOutput
            -> Repeat
            -> MulticastSubject SynchPulse

            PublishSubject<System.Object> SynchPulse
            -> Harp.Pluma.CreateMessage(Payload=Harp.Pluma.CreateOutputSetPayload(MessageType=Write, Value="DO0 DO1"))
            -> MulticastSubject PlumaCommands => #6
            ExternalizedMapping(DueTime) => #7
            #6, #7 -> Delay(DueTime=PT0.1S)
            -> Harp.Pluma.CreateMessage(Payload=Harp.Pluma.CreateOutputClearPayload(MessageType=Write, Value="DO0 DO1"))
            -> MulticastSubject PlumaCommands
            -> WorkflowOutput

    Disable GroupWorkflow Microphone
        Bonsai.Audio.AudioCapture(DeviceName="Line (Sound Blaster G3)", SampleRate=44100, SampleFormat=Stereo16, BufferLength=0.1)
        -> MulticastSubject MicrophoneData
        -> ElementIndex
        -> MemberSelector(Selector=Index)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=222, PayloadType=TimestampedS32))
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    Disable GroupWorkflow TinkerForge
        Bonsai.Tinkerforge.CreateBrickConnection(HostName=localhost, Port=4223) => #0
        -> GroupWorkflow GPS => #1
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.GPSV2(Uid=PvW, SBAS=Disabled, StatusLed=ShowStatus, DateTimePeriod=1000, AltitudePeriod=1000, CoordinatePeriod=1000, StatusPeriod=1000) => #1
            -> Bonsai.Tinkerforge.GPSV2Coordinate
            -> MemberSelector(Selector="Latitude,NS,Longitude,EW")
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression:
                new(it.Item1 * (it.Item2 == 'n'? 1 : -1) as Latitude,
                it.Item3 * (it.Item4 == 'e'? 1 : -1) as Longitude)
            -> MemberSelector(Selector=Latitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=227, PayloadType=TimestampedS64)) => #7
            #4 -> MemberSelector(Selector=Longitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=228, PayloadType=TimestampedS64)) => #10
            #1 -> Bonsai.Tinkerforge.GPSV2Altitude
            -> MemberSelector(Selector=Altitude)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=229, PayloadType=TimestampedS32)) => #14
            #1 -> Bonsai.Tinkerforge.GPSV2DateTime => #15
            -> MemberSelector(Selector=Date)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=230, PayloadType=TimestampedS64)) => #18
            #15 -> MemberSelector(Selector=Time)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=231, PayloadType=TimestampedS64)) => #21
            #1 -> Bonsai.Tinkerforge.GPSV2Status
            -> MemberSelector(Selector=HasFix)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=232, PayloadType=TimestampedU8)) => #25
            #7, #10, #14, #18, #21, #25 -> Merge
            -> WorkflowOutput
        #0 -> GroupWorkflow AirQuality => #2
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.AirQuality(Uid=Xco, Period=1000, TemperatureOffset=0, BackgroundCalibrationDuration=Days4, StatusLed=ShowStatus) => #1
            -> MemberSelector(Selector=IaqIndex)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=233, PayloadType=TimestampedS32)) => #4
            #1 -> MemberSelector(Selector=Temperature)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=234, PayloadType=TimestampedS32)) => #7
            #1 -> MemberSelector(Selector=Humidity)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=235, PayloadType=TimestampedS32)) => #10
            #1 -> MemberSelector(Selector=AirPressure)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=236, PayloadType=TimestampedS32)) => #13
            #4, #7, #10, #13 -> Merge
            -> WorkflowOutput
        #0 -> GroupWorkflow SoundPressure => #3
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.SoundPressureLevel(Uid=XzC, Period=10, FftSize=FftSize512, Weighting=WeightingITU, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=237, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow Humidity => #4
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.HumidityV2(Uid=WhE, Period=10, Heater=Disabled, MovingAverageLengthTemperature=5, MovingAverageLengthHumidity=5, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=238, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow AnalogInput => #5
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.AnalogInV3(Uid=Zmo, Period=10, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=239, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow IndustrialDual020mAV2 => #6
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.IndustrialDual020mAV2(Uid=Prc, Period=10, Channel=0, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=243, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow Thermocouple => #7
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.ThermocoupleV2(Uid=WpT, Period=10, Averaging=Averaging1, Type=TypeK, Filter=Filter50Hz, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=244, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow PTCV2 => #8
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.PTCV2(Uid=KW8, Period=10, MovingAverageLengthTemperature=1, MovingAverageLengthResistance=1, WireMode=WireMode2, StatusLed=ShowStatus)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=245, PayloadType=TimestampedS32))
            -> WorkflowOutput
        #0 -> GroupWorkflow "Particulate Matter" => #9
            WorkflowInput Source1
            -> Bonsai.Tinkerforge.ParticulateMatter(Uid=LdX, Period=10, StatusLed=ShowStatus) => #1
            -> MemberSelector(Selector=Pm10)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=240, PayloadType=TimestampedS32)) => #4
            #1 -> MemberSelector(Selector=Pm25)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=241, PayloadType=TimestampedS32)) => #7
            #1 -> MemberSelector(Selector=Pm100)
            -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
            -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=242, PayloadType=TimestampedS32)) => #10
            #4, #7, #10 -> Merge
            -> WorkflowOutput
        #1, #2, #3, #4, #5, #6, #7, #8, #9 -> Merge
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    Disable GroupWorkflow Pupil
        Bonsai.Zyre.ZyreNode(Name=Pupil, Group=pupil-mobile-v4, Interface=192.168.137.1)
        -> Condition WhisperEvent
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=StringProperty(Value=WhisperEvent))
            -> WorkflowOutput
        -> MemberSelector(Selector=Content)
        -> MemberSelector(Selector=First)
        -> PupilInterface.PupilSensor
        -> Bonsai.IO.WriteLine
        -> PublishSubject PupilSensorData
        -> WorkflowOutput

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorLoggingName=WorldCamera, SensorName="PI world v1")
        -> MulticastSubject PupilSensorLogging => #10
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=210, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging
        -> Disable ElementIndex
        -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)
        #10 -> MemberSelector(Selector=Item2.Last.Buffer) => #16
        ExternalizedMapping(Value(DisplayName=Path))
        -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=C:\git\emotional-cities\benchmarks\Experiment\LocalPackages\FFMPEGlib)
        -> PropertyMapping(BinariesPath) => #19
        #16, #19 -> PupilInterface.DecodeByteFrame(BinariesPath=C:\git\emotional-cities\benchmarks\Experiment\LocalPackages\FFMPEGlib)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> MulticastSubject PupilDecodedFrames
        -> Disable ElementIndex
        -> Disable Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=false)

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorLoggingName=Gaze, SensorName=Gaze)
        -> MulticastSubject PupilSensorLogging
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=212, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorLoggingName=Key, SensorName=event_000a0000)
        -> MulticastSubject PupilSensorLogging
        -> MemberSelector(Selector=Item1)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=214, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging

        SubscribeSubject PupilSensorData
        -> IncludeWorkflow(Path=Extensions\StartZmqPupilStream.bonsai, SensorLoggingName=Recording, SensorName="OnePlus 8")

    GroupWorkflow AdaFruitAcc
        ExternalizedMapping(PortName)
        -> Bonsai.IO.CreateSerialPort
          Name=Accel
          PortName=COM16
          BaudRate=115200
          Parity=None
          ParityReplace=63
          DataBits=8
          StopBits=One
          Handshake=None
          DiscardNull=false
          DtrEnable=true
          RtsEnable=false
          ReadBufferSize=4096
          WriteBufferSize=2048
          ReceivedBytesThreshold=1

        Bonsai.IO.SerialStringRead(PortName=Accel, NewLine=\r\n)
        -> ParseAccelerometerString => #3
        SubscribeSubject TimestampSource => #4
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject PlumaEvents
        -> Harp.Pluma.Parse(MessageType=Event, Register=Harp.Pluma.TimestampedAccelerometerData)
        -> MemberSelector(Selector=Seconds) => #8
        #5, #8 -> Zip
        -> MemberSelector(Selector="Item1.Item1,Item2,Item1.Item2")
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as AccData,
            it.Item2 as TriggerTimestamp,
            it.Item3 as TimestampSource)
        -> MemberSelector(Selector="AccData,TriggerTimestamp,TimestampSource")
        -> MulticastSubject AccelarometerData
        -> WorkflowOutput

    Disable GroupWorkflow UBX
        Bonsai.uBlox.Device(PortName=COM15) => #0
        SubscribeSubject TimestampSource => #1
        #0, #1 -> WithLatestFrom
        -> MulticastSubject UbxEvents
        -> WorkflowOutput
        #0 -> Condition => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageId)
            -> Equal(Operand=WorkflowProperty<Bonsai.uBlox.MessageId>(Value=TIM_TM2))
            -> WorkflowOutput
        -> MemberSelector(Selector=PayloadLength)
        #5 -> MemberSelector(Selector=MessageBytes)
        -> Index(Operand=IntProperty(Value=7))
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=21))
            -> WorkflowOutput
        #0 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageId)
            -> Equal(Operand=WorkflowProperty<Bonsai.uBlox.MessageId>(Value=TIM_TP))
            -> WorkflowOutput

    GroupWorkflow Empatica
        Defer InitializeClient
            StringProperty(Value=127.0.0.1)
            -> Take(Count=1)
            -> AsyncSubject E4_Host

            IntProperty(Value=28000)
            -> Take(Count=1)
            -> AsyncSubject E4_Port

            StringProperty(Value=11111111111111111111111111111111)
            -> Take(Count=1)
            -> AsyncSubject E4_API_KEY

            BehaviorSubject<System.String> EmpaticaCommands => #9
            SubscribeSubject E4_Host
            -> PropertyMapping(Host) => #11
            SubscribeSubject E4_Port
            -> PropertyMapping(Port) => #13
            #9, #11, #13 -> Bonsai.WebSockets.EmpaticaClient(Host=127.0.0.1, Port=28000) => #14
            SubscribeSubject TimestampSource => #15
            #14, #15 -> WithLatestFrom
            -> MulticastSubject EmpaticaEvents
            -> WorkflowOutput

            Disable StringProperty(Value=device_list)
            -> Disable MulticastSubject EmpaticaCommands
            -> Disable GroupWorkflow "Device List"
                WorkflowInput Source1
                -> WorkflowOutput

            StringProperty(Value=73735A)
            -> Format(Format="device_connect {0}", Selector=it)
            -> MulticastSubject EmpaticaCommands

            StringProperty(Value=bvp) => #25
            StringProperty(Value=acc) => #26
            StringProperty(Value=gsr) => #27
            StringProperty(Value=ibi) => #28
            StringProperty(Value=tmp) => #29
            StringProperty(Value=bat) => #30
            StringProperty(Value=tag) => #31
            #26, #25, #27, #28, #29, #30, #31 -> Merge => #32
            Timer(DueTime=PT1S, Period=PT0.1S)
            -> Take(Count=7) => #34
            #32, #34 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Format(Format="device_subscribe {0} ON", Selector=it)
            -> MulticastSubject EmpaticaCommands
        -> DelaySubscription(DueTime=PT5S)
        -> WorkflowOutput

    Disable GroupWorkflow ECG_Viz
        SubscribeSubject PlumaEvents
        -> Harp.Pluma.Parse(Register=Harp.Pluma.TimestampedEcgAndAnalogData)
        -> MemberSelector(Selector=Value.Ecg)
        -> Slice(Start=0, Step=4, Stop=nil)
        -> Bonsai.Dsp.FrequencyFilter(SampleRate=250, Cutoff1=1, Cutoff2=0, KernelLength=60, FilterType=HighPass)
        -> WorkflowOutput

    Disable GroupWorkflow Wind
        WindSerial(PortName=COM17, RequestString=0R4!, PollingInterval=50, Timeout=1000)
        -> Parse(Pattern="%d %d %d %d %d %d %d")
        -> GroupWorkflow "R4 MessageParse" => #2
            WorkflowInput Source1
            -> Condition "Check For Error Codes -9999 and -9990"
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item2)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item3)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item4)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item5)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item6)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
                  Expression: it!=-9999 && it!= -9990
                #0 -> MemberSelector(Selector=Item7)
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
                  Expression: it!=-9999 && it!= -9990
                #2, #4, #6, #8, #10, #12, #14 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new (
                it.Item1 as NorthWindSpeed,
                it.Item2 as EastWindSpeed,
                it.Item3 as GustWindSpeeed,
                it.Item4 as AirTemperature,
                it.Item5 as XOrientation,
                it.Item6 as YOrientation,
                it.Item7 as NullValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=NorthWindSpeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=246, PayloadType=TimestampedFloat)) => #5
        #2 -> MemberSelector(Selector=EastWindSpeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=247, PayloadType=TimestampedFloat)) => #8
        #2 -> MemberSelector(Selector=GustWindSpeeed)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=248, PayloadType=TimestampedFloat)) => #11
        #2 -> MemberSelector(Selector=AirTemperature)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=249, PayloadType=TimestampedFloat)) => #14
        #2 -> MemberSelector(Selector=XOrientation)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=250, PayloadType=TimestampedFloat)) => #17
        #2 -> MemberSelector(Selector=YOrientation)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=251, PayloadType=TimestampedFloat)) => #20
        #2 -> MemberSelector(Selector=NullValue)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=252, PayloadType=TimestampedFloat)) => #23
        #5, #8, #11, #14, #17, #20, #23 -> Merge
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

    GroupWorkflow EEG
        SubscribeSubject SynchPulse
        -> IntProperty(Value=1)
        -> Accumulate
        -> Bonsai.Lsl.StreamOutlet EmotionalCitiesStream1(ContentType=Markers, ChannelCount=1, Selector=it, SampleRate=0) => #3
        SubscribeSubject TimestampSource => #4
        Bonsai.Windows.Input.KeyDown(Filter=A, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35000)) => #8
        Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35100)) => #12
        Bonsai.Windows.Input.KeyDown(Filter=D, SuppressRepetitions=true)
        -> IntProperty(Value=1)
        -> Accumulate
        -> Add(Operand=IntProperty(Value=35200)) => #16
        #8, #12, #16 -> Merge
        -> Bonsai.Lsl.StreamOutlet EmotionalCitiesStream2(ContentType=Markers, ChannelCount=1, Selector=it, SampleRate=0) => #18
        #3, #18 -> Merge
        -> Bonsai.Lsl.Timestamp => #20
        #20, #4 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> MulticastSubject EEG_Marker
        -> WorkflowOutput

    Disable GroupWorkflow LDR
        SubscribeSubject PlumaEvents
        -> Harp.Pluma.Parse(Register=Harp.Pluma.TimestampedEcgAndAnalogData)
        -> MemberSelector(Selector=Value.Adc)
        -> WorkflowOutput

    Disable GroupWorkflow "Debug tools"
        SubscribeSubject MicrophoneData
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai) => #1
        -> MemberSelector(Selector=Value)
        -> Bonsai.Dsp.Threshold(ThresholdValue=110, MaxValue=1, ThresholdType=Binary)
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=0))
        -> Condition => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #7, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> GateInterval(Interval=PT1S) => #10
        SubscribeSubject PlumaEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Write, Register=Bonsai.Harp.FilterMessageAddress(Address=39))
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #13
        #10, #13 -> Zip
        -> Subtract

        SubscribeSubject HarpSoftwareLogging
        -> Condition => #17
            WorkflowInput Source1
            -> MemberSelector(Selector=Address)
            -> NotEqual(Operand=IntProperty(Value=222))
            -> WorkflowOutput
        -> Bonsai.Harp.FilterMessage(MessageType=Write, Register=Bonsai.Harp.FilterMessageAddress(Address=nil)) => #18
        #17 -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=nil)) => #19
        #18, #19 -> Merge
        -> GroupBy(KeySelector=Address)
        -> SelectMany
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> Merge
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: TimeSpan.FromSeconds(it)
            SubscribeSubject Data
            -> MemberSelector(Selector=Key) => #7
            #5, #7 -> WithLatestFrom
            -> WorkflowOutput
        -> Bonsai.Design.Visualizers.LineGraphBuilder(ValueSelector="Item1.TotalMinutes,Item2", SymbolType=VDash, LineWidth=0, Capacity=10000, XMin=nil, XMax=nil, YMin=nil, YMax=nil)

        GroupWorkflow PupilDebug
            SubscribeSubject PupilDecodedFrames
            -> MemberSelector(Selector=Value)
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it == null
                -> BitwiseNot
                -> WorkflowOutput
            -> Bonsai.Dsp.Average
            -> MemberSelector(Selector=Val0)
            -> GreaterThan(Operand=DoubleProperty(Value=50))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1)
            -> Scan
                WorkflowInput Source1
                -> MemberSelector(Selector=Accumulation)
                -> Add(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> WorkflowOutput

    Disable GroupWorkflow "Pupil Debug"
        SubscribeSubject PupilDecodedFrames
        -> Condition DropNull
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> DistinctUntilChanged
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> IntProperty(Value=1)
        -> Accumulate => #9
        SubscribeSubject SynchPulse
        -> IntProperty(Value=1)
        -> Accumulate => #12
        #9, #12 -> CombineLatest

        SubscribeSubject PupilDecodedFrames
        -> Condition DropNull
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it == null
            -> BitwiseNot
            -> WorkflowOutput
        -> TimeInterval
        -> MemberSelector(Selector=Interval.TotalMilliseconds)
        -> WindowCount(Count=100, Skip=10)
        -> SelectMany
            WorkflowInput Source1
            -> Sum
            -> Divide(Operand=DoubleProperty(Value=100))
            -> WorkflowOutput

    GroupWorkflow Omnicept
        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557, Topic="") => #0
        -> MemberSelector(Selector=First)
        -> Bonsai.ZeroMQ.ConvertToString => #2
        -> StringToInt(Topic(string=EyeTracking, string=HeartRate, string=IMU, string=Mouth))
        -> Add(Operand=IntProperty(Value=215)) => #4
        #0 -> GetOmniceptGliaTimestamp
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai) => #6
        #2, #4, #6, #0 -> Zip => #7
        -> Sink
            WorkflowInput Source1 => #0
            -> GroupWorkflow "Harp Logging" => #1
                WorkflowInput Source1 => #0
                ExternalizedMapping(Address) => #1
                #0, #1 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    ExternalizedMapping(Value(DisplayName=Address)) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=215))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item3) => #3
                #3, #1 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=215, PayloadType=TimestampedU64))
                -> WorkflowOutput
            #0 -> GroupWorkflow "Harp Logging" => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Address) => #1
                #0, #1 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    ExternalizedMapping(Value(DisplayName=Address)) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=216))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item3) => #3
                #3, #1 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=216, PayloadType=TimestampedU64))
                -> WorkflowOutput
            #0 -> GroupWorkflow "Harp Logging" => #3
                WorkflowInput Source1 => #0
                ExternalizedMapping(Address) => #1
                #0, #1 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    ExternalizedMapping(Value(DisplayName=Address)) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=217))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item3) => #3
                #3, #1 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=217, PayloadType=TimestampedU64))
                -> WorkflowOutput
            #0 -> GroupWorkflow "Harp Logging" => #4
                WorkflowInput Source1 => #0
                ExternalizedMapping(Address) => #1
                #0, #1 -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2) => #1
                    ExternalizedMapping(Value(DisplayName=Address)) => #2
                    #1, #2 -> Equal(Operand=IntProperty(Value=218))
                    -> WorkflowOutput
                -> MemberSelector(Selector=Item3) => #3
                #3, #1 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=218, PayloadType=TimestampedU64))
                -> WorkflowOutput
            #1, #2, #3, #4 -> Merge
            -> MulticastSubject HarpSoftwareLogging
            -> WorkflowOutput
        -> MemberSelector(Selector="Item1,Item4")
        -> MulticastSubject OmniceptGlia
        #7 -> Disable MemberSelector(Selector="Item2,Item3")
        -> Disable PublishSubject GliaHarp

        Disable SubscribeSubject GliaHarp
        -> Disable GroupBy(KeySelector=Item1, ElementSelector=Item2)
        -> Disable SelectMany
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> MemberSelector(Selector=Key)
            -> Take(Count=1)
            -> AsyncSubject HarpAdress

            CreateObservable
                SubscribeSubject Data
                -> Merge => #1
                SubscribeSubject HarpAdress
                -> PropertyMapping(Address) => #3
                #1, #3 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=216, PayloadType=TimestampedU64))
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Disable MulticastSubject HarpSoftwareLogging

    GroupWorkflow OmniceptDebug
        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557, Topic=Mouth) => #0
        -> ToOmniceptMouthCamera => #1
        -> MemberSelector(Selector=Image)
        #1 -> MemberSelector(Selector=TimeStamp)
        -> MemberSelector(Selector=HardwareTimeMicroSeconds)
        #0 -> MemberSelector(Selector=First) => #5
        -> Bonsai.ZeroMQ.ConvertToString
        #5 -> MemberSelector(Selector=Buffer.Length)
        #5 -> MemberSelector(Selector=BufferSize)

        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557, Topic=EyeTracking)
        -> ToOmniceptEyeTracking => #10
        -> Disable IncludeWorkflow(Path=Extensions\OmniceptStream.bonsai, SensorLoggingName=Gaze)
        -> Disable MulticastSubject OmniceptSensorLogging => #12
        -> Disable MemberSelector(Selector=Item2)
        -> Disable ToOmniceptEyeTracking
        -> Disable MemberSelector(Selector=X)
        #12 -> Disable MemberSelector(Selector=Item1)
        -> Disable Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=215, PayloadType=TimestampedU64))
        -> Disable MulticastSubject HarpSoftwareLogging
        #10 -> MemberSelector(Selector=Position) => #19
        -> MemberSelector(Selector=Val0)
        #19 -> MemberSelector(Selector=Val1)
        #10 -> MemberSelector(Selector=Timestamp.HardwareTimeMicroSeconds)
        #10 -> MemberSelector(Selector=LeftEye) => #23
        -> MemberSelector(Selector=PupilPosition.X)
        #23 -> MemberSelector(Selector=PupilPosition.Y)
        #10 -> MemberSelector(Selector=RightEye)
        -> MemberSelector(Selector=PupilPosition) => #27
        -> MemberSelector(Selector=X)
        #27 -> MemberSelector(Selector=Y)

        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557, Topic=HeartRate)
        -> ToOmniceptHeartRate => #31
        -> MemberSelector(Selector=Rate)
        -> Disable IncludeWorkflow(Path=Extensions\OmniceptStream.bonsai, SensorLoggingName=HeartRate)
        -> Disable MulticastSubject OmniceptSensorLogging => #34
        -> Disable MemberSelector(Selector=Item2)
        -> Disable ToOmniceptHeartRate
        -> Disable MemberSelector(Selector=Rate)
        #34 -> Disable MemberSelector(Selector=Item1)
        -> Disable Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=216, PayloadType=TimestampedU64))
        -> Disable MulticastSubject HarpSoftwareLogging
        #31 -> MemberSelector(Selector=Timestamp.HardwareTimeMicroSeconds)

        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5557, Topic=IMU)
        -> ToOmniceptIMU => #43
        -> Disable IncludeWorkflow(Path=Extensions\OmniceptStream.bonsai, SensorLoggingName=IMU)
        -> Disable MulticastSubject OmniceptSensorLogging => #45
        -> Disable MemberSelector(Selector=Item2)
        -> Disable ToOmniceptIMU
        -> Disable MemberSelector(Selector=AccelerationX)
        #45 -> Disable MemberSelector(Selector=Item1)
        -> Disable Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=215, PayloadType=TimestampedU64))
        -> Disable MulticastSubject HarpSoftwareLogging
        #43 -> MemberSelector(Selector=Timestamp.HardwareTimeMicroSeconds)
        #43 -> MemberSelector(Selector=Acceleration)
        #43 -> MemberSelector(Selector=Gyroscope)

    GroupWorkflow Unity
        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5558, Topic=Position)
        -> MulticastSubject VRTransform
        -> ToUnityTransform
        -> MemberSelector(Selector=SystemTimeMicroseconds)
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=219, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging
        -> WorkflowOutput

        Bonsai.ZeroMQ.Subscriber(ConnectionString=tcp://localhost:5559)
        -> MulticastSubject VRImage
        -> UnityTimestampMicroSeconds
        -> IncludeWorkflow(Path=Extensions\TimestampExt.bonsai)
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=220, PayloadType=TimestampedU64))
        -> MulticastSubject HarpSoftwareLogging
#3, #2 -> TakeUntil

GroupWorkflow SendPathToUnity
    Timer(DueTime=PT1S, Period=PT0S) => #0
    SubscribeSubject LoggingPath => #1
    #1, #0 -> SubscribeWhen
    -> Bonsai.ZeroMQ.Publisher(ConnectionString=tcp://localhost:5560, Topic=Path)
    -> WorkflowOutput
