<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:p2="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:pluma="clr-namespace:EmotionalCities.Pluma;assembly=EmotionalCities.Pluma"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>EEG</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SynchPulse</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="EegSample" Category="Eeg" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="EegTimeout" Category="Eeg" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>EEG</p1:Name>
                <p1:Interval>PT1M3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EEgProtocolStream</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="p2:ObjectTextVisualizer" />
            </Expression>
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Pluma</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlumaEvents</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="PlumaSample" Category="Pluma" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="PlumaTimeout" Category="Pluma" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>Pluma</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>ECG_Viz</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PlumaEvents</Name>
                  </Expression>
                  <Expression xsi:type="pluma:Parse">
                    <harp:Register xsi:type="pluma:TimestampedEcgAndAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Ecg</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Slice">
                      <rx:Start>0</rx:Start>
                      <rx:Step>4</rx:Step>
                      <rx:Stop xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:FrequencyFilter">
                      <dsp:SampleRate>250</dsp:SampleRate>
                      <dsp:Cutoff1>1</dsp:Cutoff1>
                      <dsp:Cutoff2>0</dsp:Cutoff2>
                      <dsp:KernelLength>60</dsp:KernelLength>
                      <dsp:FilterType>HighPass</dsp:FilterType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>VRTransform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>VRTransform</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="Sample" Category="UnityTransform" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="Timeout" Category="UnityTransform" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Name" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>VRTransform</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>VRTransform</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToUnityTransform" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position</Selector>
            </Expression>
            <Expression xsi:type="viz:RollingGraphBuilder">
              <viz:SymbolType>None</viz:SymbolType>
              <viz:LineWidth>1</viz:LineWidth>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>GliaEye</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>HeartRate</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>HeartRate</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptHeartRate" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>IMU</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>IMU</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptIMU" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>MouthCamera</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>Mouth</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptMouthCamera" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OmniceptGlia</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Gaze</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>EyeTracking</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptEyeTracking" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>LeftEye.PupilPosition.X</Selector>
                        </Expression>
                        <Expression xsi:type="NotEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>-1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="OmniceptSample" Category="Omnicept" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="GazeTimeout" Category="Omnicept" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>Gaze</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="MemberSelector">
              <Selector>LeftEye.PupilPosition</Selector>
            </Expression>
            <Expression xsi:type="viz:RollingGraphBuilder">
              <viz:SymbolType>None</viz:SymbolType>
              <viz:LineWidth>1</viz:LineWidth>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>GliaIMU</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>HeartRate</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>HeartRate</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptHeartRate" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>IMU</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>IMU</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptIMU" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OmniceptGlia</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>MouthCamera</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:Condition">
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="MemberSelector">
                            <Selector>Key</Selector>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" />
                          </Expression>
                          <Expression xsi:type="Equal">
                            <Operand xsi:type="StringProperty">
                              <Value>Mouth</Value>
                            </Operand>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="1" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Source </Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Merge" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="p1:ToOmniceptMouthCamera" />
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="4" To="5" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OmniceptGlia</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>IMU</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>IMU</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptIMU" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsValid</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Gyroscope.Val0</Selector>
                        </Expression>
                        <Expression xsi:type="NotEqual">
                          <Operand xsi:type="DoubleProperty">
                            <Value>-1</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="OmniceptSample" Category="Omnicept" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="GazeTimeout" Category="Omnicept" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>IMU</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="MemberSelector">
              <Selector>Acceleration</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="7" To="13" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Empatica</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EmpaticaEvents</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="EmpaticaSample" Category="Empatica" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="EmpaticaTimeout" Category="Empatica" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>Empatica</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>EmpaticaEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it.Contains("E4_Gsr")</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Parse">
              <Pattern>%s %d %d</Pattern>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Accelarometer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>AccelerometerData</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="AccelerometerSample" Category="Accelerometer" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SampleInterval">
                <rx:Interval>PT1S</rx:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Interval" DisplayName="AccelerometerTimeout" Category="Accelerometer" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:StreamingStatus">
                <p1:Name>Accelerometer</p1:Name>
                <p1:Interval>PT3S</p1:Interval>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>AccelerometerData</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Euler.X,Item1.Euler.Y,Item1.Euler.Z</Selector>
            </Expression>
            <Expression xsi:type="viz:RollingGraphBuilder">
              <viz:SymbolType>None</viz:SymbolType>
              <viz:LineWidth>1</viz:LineWidth>
              <viz:Capacity xsi:nil="true" />
              <viz:Min xsi:nil="true" />
              <viz:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="viz:TableLayoutPanelBuilder">
              <viz:ColumnCount>2</viz:ColumnCount>
              <viz:RowCount>1</viz:RowCount>
              <viz:ColumnStyles>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>10</viz:Width>
                </viz:ColumnStyle>
                <viz:ColumnStyle>
                  <viz:SizeType>Percent</viz:SizeType>
                  <viz:Width>90</viz:Width>
                </viz:ColumnStyle>
              </viz:ColumnStyles>
              <viz:RowStyles />
              <viz:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:Name>EmotionalCities</viz:Name>
        <viz:ColumnCount>1</viz:ColumnCount>
        <viz:RowCount>7</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>BigPupil</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>VRImage</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OmniceptGlia</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Gaze</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="StringProperty">
                            <Value>EyeTracking</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Source </Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ToOmniceptEyeTracking" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LeftEye.PupilPosition</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VRImage</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Height</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Width</Selector>
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Item3" />
                <Property Name="Y" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RescaleLeft</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="RangeMax" DisplayName="X" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0.1</dsp:Min>
                      <dsp:Max>1.1</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>914</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="RangeMax" DisplayName="Y" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0.15</dsp:Min>
                      <dsp:Max>0.9</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>516</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint">
                      <cv:X>-1005</cv:X>
                      <cv:Y>-791</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="MemberSelector">
              <Selector>RightEye.PupilPosition</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="XRangeMin" Selector="Item3" />
                <Property Name="XRangeMax" Selector="Item1" />
                <Property Name="Y" Selector="Item2" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>RescaleRight</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>X</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="RangeMin" DisplayName="XRangeMin" />
                    <Property Name="RangeMax" DisplayName="XRangeMax" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0.1</dsp:Min>
                      <dsp:Max>1.1</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>914</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Y</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="RangeMax" DisplayName="Y" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0.15</dsp:Min>
                      <dsp:Max>0.9</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>516</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint">
                      <cv:X>-1005</cv:X>
                      <cv:Y>-791</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Gaze</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="17" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="3" To="11" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="9" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="17" Label="Source2" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source3" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="GroupWorkflow">
        <Name>BigECG_Viz</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PlumaEvents</Name>
            </Expression>
            <Expression xsi:type="pluma:Parse">
              <harp:Register xsi:type="pluma:TimestampedEcgAndAnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Ecg</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Slice">
                <rx:Start>0</rx:Start>
                <rx:Step>4</rx:Step>
                <rx:Stop xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FrequencyFilter">
                <dsp:SampleRate>250</dsp:SampleRate>
                <dsp:Cutoff1>1</dsp:Cutoff1>
                <dsp:Cutoff2>0</dsp:Cutoff2>
                <dsp:KernelLength>60</dsp:KernelLength>
                <dsp:FilterType>HighPass</dsp:FilterType>
              </Combinator>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ECG</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TabControlBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>2</gui:ColumnCount>
        <gui:RowCount>2</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans>
          <gui:CellSpan ColumnSpan="1" RowSpan="2" />
        </gui:CellSpans>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="14" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="14" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source3" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="14" Label="Source4" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="14" Label="Source5" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="14" Label="Source6" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source7" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="22" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="22" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source3" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>