<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:lsl="clr-namespace:EmotionalCities.Lsl;assembly=EmotionalCities.Lsl"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchPulse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="lsl:StreamOutlet">
        <lsl:Name>EmotionalCitiesStream1</lsl:Name>
        <lsl:ContentType>Markers</lsl:ContentType>
        <lsl:ChannelCount>1</lsl:ChannelCount>
        <lsl:Selector>it</lsl:Selector>
        <lsl:SampleRate>0</lsl:SampleRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NewScene</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Scene</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ToUnityNewScene" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SpawnID</Selector>
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="IntProperty">
          <Value>100</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SceneType</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>35000</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PointToOriginMap</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToUnityPointToOriginMap" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StartStop</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>35500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>35501</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PointToOriginWorld</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToUnityPointToOriginWorld" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>StartStop</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>35600</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>35601</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ITI</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>35700</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EegProtocolStream</Name>
      </Expression>
      <Expression xsi:type="lsl:StreamOutlet">
        <lsl:Name>EmotionalCitiesStream2</lsl:Name>
        <lsl:ContentType>Markers</lsl:ContentType>
        <lsl:ChannelCount>1</lsl:ChannelCount>
        <lsl:Selector>it</lsl:Selector>
        <lsl:SampleRate>0</lsl:SampleRate>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="lsl:Timestamp" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TimestampSource</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EegMarker</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="34" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="31" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="31" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="31" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="31" Label="Source4" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source5" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source6" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>