<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DeviceId" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>InitializeClient</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>127.0.0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>E4_Host</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>28000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>E4_Port</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>11111111111111111111111111111111</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>E4_API_KEY</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>EmpaticaCommands</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>E4_Host</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Host" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>E4_Port</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Port" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:EmpaticaClient">
                <p1:Host>127.0.0.1</p1:Host>
                <p1:Port>28000</p1:Port>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TimestampSource</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="StringProperty">
                  <Value>device_list</Value>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MulticastSubject">
                <Name>EmpaticaCommands</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>Device List</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DeviceId" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value/>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>device_connect {0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>acc</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>bvp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>gsr</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ibi</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>tmp</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>bat</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>tag</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>7</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>device_subscribe {0} ON</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>EmpaticaCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="14" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source3" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="33" Label="Source1" />
            <Edge From="27" To="33" Label="Source2" />
            <Edge From="28" To="33" Label="Source3" />
            <Edge From="29" To="33" Label="Source4" />
            <Edge From="30" To="33" Label="Source5" />
            <Edge From="31" To="33" Label="Source6" />
            <Edge From="32" To="33" Label="Source7" />
            <Edge From="33" To="36" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>