<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
          <zmq:Topic />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>First</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:ConvertToString" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StringToInt">
          <p1:Topic>
            <p1:string>EyeTracking</p1:string>
            <p1:string>HeartRate</p1:string>
            <p1:string>IMU</p1:string>
            <p1:string>Mouth</p1:string>
          </p1:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>190</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:GetOmniceptGliaTimestamp" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TimestampExt.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Address" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Address" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>215</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>215</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Address" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Address" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>216</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>216</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Address" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Address" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>217</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>217</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Harp Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Address" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Address" />
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="IntProperty">
                            <Value>218</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="harp:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="harp:FormatMessagePayload">
                      <harp:Address>218</harp:Address>
                      <harp:PayloadType>TimestampedU64</harp:PayloadType>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpSoftwareLogging</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="5" Label="Source2" />
            <Edge From="3" To="5" Label="Source3" />
            <Edge From="4" To="5" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1,Item4</Selector>
      </Expression>
      <Expression xsi:type="rx:GroupBy">
        <rx:KeySelector>Item1</rx:KeySelector>
        <rx:ElementSelector>Item2</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OmniceptGlia</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="0" To="7" Label="Source4" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source3" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>