<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ubx="clr-namespace:EmotionalCities.uBlox;assembly=EmotionalCities.uBlox"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:EnumerateFileSystemEntries">
            <io:Path>C:\Users\neurogears\Desktop\EC_datasets</io:Path>
            <io:SearchPattern>*</io:SearchPattern>
            <io:SearchOption>TopDirectoryOnly</io:SearchOption>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>C:\Users\neurogears\Desktop\EC_datasets\PupilBenchmark_2022_09_29_10_59_55</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Root</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Root</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoggingPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Root</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\ubx.bin</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ubx:FileDevice">
                <ubx:FileName>C:\Users\neurogears\Desktop\EC_datasets\SoundCardTKbenchmark2022_09_27_15_16_36\ubx.bin</ubx:FileName>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Root</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\ubx_harp_ts.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Users\neurogears\Desktop\EC_datasets\SoundCardTKbenchmark2022_09_27_15_16_36\ubx_harp_ts.csv</io:FileName>
              <io:ScanPattern>%d,%s,%s</io:ScanPattern>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>UbxEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:Tuple(ubx:UbxPacket,sys:Double)">
              <rx:Name>UbxEvents</rx:Name>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item1.MessageClass,Item1.MessageId</rx:KeySelector>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>Data</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoggingPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LogName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>UBX</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}\{1}\{3}</Format>
                    <Selector>Item1,Item2,Item3,Item4</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.csv</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogUbxHarp</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="FileName" />
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:\Users\neurogears\Desktop\EC_datasets\SoundCardTKbenchmark2022_09_27_15_16_36\UBX\TIM_TM2.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>true</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>false</io:IncludeHeader>
                          <io:Selector>Item2,Item1.MessageClass,Item1.MessageId</io:Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FilePath</Name>
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}.bin</Format>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LogUbx</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MessageBytes</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Path" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:MatrixWriter">
                            <dsp:Path>C:\Users\neurogears\Desktop\EC_datasets\SoundCardTKbenchmark2022_09_27_15_16_36\UBX\TIM_TM2.bin</dsp:Path>
                            <dsp:Suffix>None</dsp:Suffix>
                            <dsp:Overwrite>true</dsp:Overwrite>
                            <dsp:Layout>ColumnMajor</dsp:Layout>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source3" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source4" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="18" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="23" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>